#pragma once
#include "Finalized Methods\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "Finalized Methods\\HSLTrcLib.hsl"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMETEDLib.hs_"
#include "Finalized Methods\\HSLMECCLib.hs_"
#include "Finalized Methods\\HSLPTLLib.hsl"

namespace _96_HEAD_FW_COMMAND {
  function _96HeadAsp_Disp( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _pp, variable _iw, variable _ix, variable _fh, variable _af, variable _wv, variable _cm, variable _cs, variable _hv, variable _hc, variable _hp, variable _zv, variable _zq, variable _mj, variable _cj, variable _cx, variable _cr, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _df, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _bv, variable _bvDispense, variable _sequencePosition, variable _sleepDispense ) void ;
  function _96HeadFullParameters( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _pp, variable _iw, variable _ix, variable _fh, variable _af, variable _wv, variable _cm, variable _cs, variable _hv, variable _hc, variable _hp, variable _zv, variable _zq, variable _mj, variable _cj, variable _cx, variable _cr, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _df, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _bv, variable _bvDispense ) void ;
  private function xTenTurnToString( variable _floatNum, variable _formatLength ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function _96HeadAsp_Disp( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _pp, variable _iw, variable _ix, variable _fh, variable _af, variable _wv, variable _cm, variable _cs, variable _hv, variable _hc, variable _hp, variable _zv, variable _zq, variable _mj, variable _cj, variable _cx, variable _cr, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _df, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _bv, variable _bvDispense, variable _sequencePosition, variable _sleepDispense ) void {
    private variable fLabRZ;
    private variable loopCounter7;
    private variable Dispense;
    private variable FAspOverAsp;
    private variable sDispCommand;
    private variable _zt;
    private variable _hs;
    private variable _xs;
    private variable FAspSettlingTime;
    private variable FDispSwapSpeed;
    private variable _ze;
    private variable FAspBlowOut;
    private variable _es;
    private variable _lz;
    private variable FDispFlowRate;
    private variable _da;
    private variable _xd;
    private variable LC;
    private variable _vt;
    private variable FAspFlowRate;
    private variable FDispmixFlowRate;
    private variable FDispSettlingTime;
    private variable FAspSwapSpeed;
    private variable _zh;
    private variable FDispBlowOut;
    private variable _bs;
    private variable _yh;
    private variable _ev;
    private variable _aa;
    private variable fLabX;
    private variable Aspirate;
    private variable FAspAirTransport;
    private variable FDispStopFlowRate;
    private variable fLabY;
    private variable sAspCommand;
    private variable FAspMixFlow;
    private variable _wh;
    private variable _cw;
    private variable fLabZ;
    private variable FDispStopbackVolume;
    private variable _dg;
    private variable loopCounter4;
    private variable _zm;
    private variable _ag;
    private variable FDispAirTranspo;
    private timer timer2;
    private variable arrAspFWcmd[];
    private variable arrDispFWcmd[];
    private variable sFWCommandReturn;
    if (_fh == "")
    {
      _fh = Translate("fh000");
    }
    if (_iw == "")
    {
      _iw = Translate("iw000");
    }
    if (_mj == "")
    {
      _mj = Translate("mj000");
    }
    if (_LabwareID == "")
    {
      _sequenceLabWareID.SetCurrentPosition(_sequencePosition);
      _LabwareID = SeqGetLabwareId(_sequenceLabWareID);
    }
    TrcTrace(Translate("labware ID to be used for ASP/DISP --->  "), _LabwareID);
    MLSTAR_LIQUIDCLASSLib::Initialize(0);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_liquidClass);
    FAspAirTransport = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    FAspBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    FAspFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    FAspMixFlow = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
    FAspOverAsp = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
    FAspSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    FAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    FDispAirTranspo = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
    FDispBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
    FDispFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    FDispmixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    FDispSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    FDispStopbackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
    FDispStopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
    FDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    FAspAirTransport = xTenTurnToString(FAspAirTransport, 3);
    FAspBlowOut = xTenTurnToString(FAspBlowOut, 5);
    FAspFlowRate = xTenTurnToString(FAspFlowRate, 4);
    FAspMixFlow = xTenTurnToString(FAspMixFlow, 4);
    FAspOverAsp = xTenTurnToString(FAspOverAsp, 5);
    FAspSettlingTime = xTenTurnToString(FAspSettlingTime, 2);
    FAspSwapSpeed = xTenTurnToString(FAspSwapSpeed, 4);
    FDispAirTranspo = xTenTurnToString(FDispAirTranspo, 3);
    FDispBlowOut = xTenTurnToString(FDispBlowOut, 5);
    FDispmixFlowRate = xTenTurnToString(FDispmixFlowRate, 4);
    FDispFlowRate = xTenTurnToString(FDispFlowRate, 4);
    FDispSettlingTime = xTenTurnToString(FDispSettlingTime, 2);
    FDispStopbackVolume = xTenTurnToString(FDispStopbackVolume, 3);
    FDispStopFlowRate = xTenTurnToString(FDispStopFlowRate, 4);
    FDispSwapSpeed = xTenTurnToString(FDispSwapSpeed, 4);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(System, _LabwareID, fLabX, fLabY, fLabZ, fLabRZ);
    fLabX = xTenTurnToString(fLabX, 5);
    fLabY = xTenTurnToString(fLabY, 4);
    _FixedHeightDuringAsp = _FixedHeightDuringAsp + fLabZ;
    _fixedHeightDuringDispense = _fixedHeightDuringDispense + fLabZ;
    _LLDSearchHeight = _LLDSearchHeight + fLabZ;
    _FixedHeightDuringAsp = xTenTurnToString(_FixedHeightDuringAsp, 4);
    _fixedHeightDuringDispense = xTenTurnToString(_fixedHeightDuringDispense, 4);
    _LLDSearchHeight = xTenTurnToString(_LLDSearchHeight, 4);
    fLabZ = xTenTurnToString(fLabZ, 4);
    Aspirate = Translate("C0EA");
    Dispense = Translate("C0ED");
    _aa = Translate("aa0");
    _ag = Translate("ag") + FAspFlowRate;
    _bs = Translate("bs") + FAspSwapSpeed;
    if (_bv == "")
    {
      _bv = Translate("bv") + FAspBlowOut;
    }
    _vt = Translate("vt") + FAspAirTransport;
    _cw = Translate("cw") + Translate("FFFFFFFFFFFFFFFFFFFFFFFF");
    _hs = Translate("hs") + FAspMixFlow;
    _wh = Translate("wh") + FAspSettlingTime;
    _wh = Translate("wh") + FAspSettlingTime;
    _xd = Translate("xd") + Translate("0");
    _xs = Translate("xs") + fLabX;
    _yh = Translate("yh") + fLabY;
    _zt = Translate("zt") + _FixedHeightDuringAsp;
    if (_GotoTraverseBeforeAsp == 1)
    {
      _zh = Translate("zh2450");
    }
    else
    {
      _zh = Translate("zh") + _FixedHeightDuringAsp;
    }
    if (_GotoTraverseAfterAsp == 1)
    {
      _ze = Translate("ze2450");
    }
    else
    {
      _ze = Translate("ze") + _FixedHeightDuringAsp;
    }
    _lz = Translate("lz") + _LLDSearchHeight;
    _zm = Translate("zm") + fLabZ;
    arrAspFWcmd.SetSize(0);
    arrAspFWcmd.AddAsLast(_aa);
    arrAspFWcmd.AddAsLast(_af);
    arrAspFWcmd.AddAsLast(_ag);
    arrAspFWcmd.AddAsLast(_bs);
    arrAspFWcmd.AddAsLast(_bv);
    arrAspFWcmd.AddAsLast(_cj);
    arrAspFWcmd.AddAsLast(_cm);
    arrAspFWcmd.AddAsLast(_cr);
    arrAspFWcmd.AddAsLast(_cs);
    arrAspFWcmd.AddAsLast(_cw);
    arrAspFWcmd.AddAsLast(_cx);
    arrAspFWcmd.AddAsLast(_fh);
    arrAspFWcmd.AddAsLast(_hc);
    arrAspFWcmd.AddAsLast(_hp);
    arrAspFWcmd.AddAsLast(_hs);
    arrAspFWcmd.AddAsLast(_hv);
    arrAspFWcmd.AddAsLast(_iw);
    arrAspFWcmd.AddAsLast(_ix);
    arrAspFWcmd.AddAsLast(_lz);
    arrAspFWcmd.AddAsLast(_mj);
    arrAspFWcmd.AddAsLast(_pp);
    arrAspFWcmd.AddAsLast(_vt);
    arrAspFWcmd.AddAsLast(_wh);
    arrAspFWcmd.AddAsLast(_wv);
    arrAspFWcmd.AddAsLast(_xd);
    arrAspFWcmd.AddAsLast(_xs);
    arrAspFWcmd.AddAsLast(_yh);
    arrAspFWcmd.AddAsLast(_ze);
    arrAspFWcmd.AddAsLast(_zh);
    arrAspFWcmd.AddAsLast(_zm);
    arrAspFWcmd.AddAsLast(_zq);
    arrAspFWcmd.AddAsLast(_zt);
    arrAspFWcmd.AddAsLast(_zv);
    _da = Translate("da3");
    if (_GotoTraverseHeightBeforeDisp == 1)
    {
      _zh = Translate("zh2450");
    }
    else
    {
      _zh = Translate("zh") + _fixedHeightDuringDispense;
    }
    if (_GotoTraverseHeightAfterDisp == 1)
    {
      _ze = Translate("ze2450");
    }
    else
    {
      _ze = Translate("ze") + _fixedHeightDuringDispense;
    }
    _zt = Translate("zt") + _fixedHeightDuringDispense;
    _dg = Translate("dg") + FDispFlowRate;
    _es = Translate("es") + FDispStopFlowRate;
    _ev = Translate("ev") + FDispStopbackVolume;
    _vt = Translate("vt") + FDispAirTranspo;
    if (_bvDispense == "")
    {
      _bvDispense = Translate("bv") + FDispBlowOut;
    }
    _bs = Translate("bs") + FDispSwapSpeed;
    _wh = Translate("wh") + FDispSettlingTime;
    arrDispFWcmd.SetSize(0);
    arrDispFWcmd.AddAsLast(_da);
    arrDispFWcmd.AddAsLast(_xs);
    arrDispFWcmd.AddAsLast(_xd);
    arrDispFWcmd.AddAsLast(_yh);
    arrDispFWcmd.AddAsLast(_zm);
    arrDispFWcmd.AddAsLast(_zv);
    arrDispFWcmd.AddAsLast(_zq);
    arrDispFWcmd.AddAsLast(_lz);
    arrDispFWcmd.AddAsLast(_zt);
    arrDispFWcmd.AddAsLast(_pp);
    arrDispFWcmd.AddAsLast(_iw);
    arrDispFWcmd.AddAsLast(_fh);
    arrDispFWcmd.AddAsLast(_zh);
    arrDispFWcmd.AddAsLast(_ze);
    arrDispFWcmd.AddAsLast(_df);
    arrDispFWcmd.AddAsLast(_dg);
    arrDispFWcmd.AddAsLast(_es);
    arrDispFWcmd.AddAsLast(_ev);
    arrDispFWcmd.AddAsLast(_vt);
    arrDispFWcmd.AddAsLast(_bvDispense);
    arrDispFWcmd.AddAsLast(_cm);
    arrDispFWcmd.AddAsLast(_cs);
    arrDispFWcmd.AddAsLast(_bs);
    arrDispFWcmd.AddAsLast(_wh);
    arrDispFWcmd.AddAsLast(_mj);
    arrDispFWcmd.AddAsLast(_cw);
    sAspCommand = arrAspFWcmd.ElementAt( 1 -1);
    sDispCommand = Translate("");
    {
      for(loopCounter4 = 0; loopCounter4 < 32;)
      {
        loopCounter4 = loopCounter4 + 1;
        LC = loopCounter4 + 1;
        sAspCommand = sAspCommand + arrAspFWcmd.ElementAt( LC -1);
      }
    }
    {
      for(loopCounter7 = 0; loopCounter7 < 26;)
      {
        loopCounter7 = loopCounter7 + 1;
        sDispCommand = sDispCommand + arrDispFWcmd.ElementAt( loopCounter7 -1);
      }
    }
    TrcTrace(Translate("Aspirate FW command -- "), sAspCommand);
    TrcTrace(Translate("Dispense FW command -- "), sDispCommand);
    if (_Aspirate == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (_Dispense == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepDispense) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  private function xTenTurnToString( variable _floatNum, variable _formatLength ) variable {
    private variable leadingZeroesToAdd;
    private variable sLeadZeroes;
    private variable ilength;
    private variable loopCounter4;
    sLeadZeroes = Translate("");
    _floatNum = _floatNum * 10;
    _floatNum = MthCeiling(_floatNum);
    _floatNum = StrIStr(_floatNum);
    ilength = StrGetLength(_floatNum);
    leadingZeroesToAdd = _formatLength - ilength;
    {
      for(loopCounter4 = 0; loopCounter4 < leadingZeroesToAdd;)
      {
        loopCounter4 = loopCounter4 + 1;
        sLeadZeroes = sLeadZeroes + Translate("0");
      }
    }
    _floatNum = sLeadZeroes + _floatNum;
    if(0){
      TrcTrace(Translate("returned parameter value for FW command -- "), _floatNum);
    }
    return (_floatNum);
  }

  function _96HeadFullParameters( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _pp, variable _iw, variable _ix, variable _fh, variable _af, variable _wv, variable _cm, variable _cs, variable _hv, variable _hc, variable _hp, variable _zv, variable _zq, variable _mj, variable _cj, variable _cx, variable _cr, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _df, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _bv, variable _bvDispense ) void {
    private variable fLabRZ;
    private variable loopCounter7;
    private variable FAspOverAsp;
    private variable Dispense;
    private variable _hs;
    private variable _zt;
    private variable sDispCommand;
    private variable _xs;
    private variable FAspSettlingTime;
    private variable FDispSwapSpeed;
    private variable _ze;
    private variable _es;
    private variable FDispFlowRate;
    private variable _lz;
    private variable _xd;
    private variable _da;
    private variable FAspBlowOut;
    private variable LC;
    private variable _vt;
    private variable FAspFlowRate;
    private variable FDispmixFlowRate;
    private variable FDispSettlingTime;
    private variable _zh;
    private variable FAspSwapSpeed;
    private variable _aa;
    private variable FDispBlowOut;
    private variable _yh;
    private variable _ev;
    private variable _bs;
    private variable fLabX;
    private variable FAspAirTransport;
    private variable Aspirate;
    private variable FDispStopFlowRate;
    private variable fLabY;
    private variable FAspMixFlow;
    private variable _wh;
    private variable sAspCommand;
    private variable fLabZ;
    private variable _cw;
    private variable FDispStopbackVolume;
    private variable _dg;
    private variable loopCounter4;
    private variable _zm;
    private variable FDispAirTranspo;
    private variable _ag;
    private timer timer2;
    private variable arrAspFWcmd[];
    private variable arrDispFWcmd[];
    if (_fh == "")
    {
      _fh = Translate("fh000");
    }
    if (_iw == "")
    {
      _iw = Translate("iw000");
    }
    if (_mj == "")
    {
      _mj = Translate("mj000");
    }
    if (_LabwareID == "")
    {
      _sequenceLabWareID.SetCurrentPosition(1);
      _LabwareID = SeqGetLabwareId(_sequenceLabWareID);
    }
    TrcTrace(Translate("labware ID to be used for ASP/DISP --->  "), _LabwareID);
    MLSTAR_LIQUIDCLASSLib::Initialize(0);
    MECC::TraceComment(Translate("Liquid Class Lib Initialized********************************************************************************************************"));
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_liquidClass);
    MECC::TraceComment(Translate("liquid Class lib selected\n-----------------------------------------------------------------------------------------------------------------"));
    MECC::TraceComment(Translate("--------------------------------LIQUID CLASS PARAMETERS CONVERTED TO FW PARAMATERS (in order below)---------------------------------\n********Aspiration*********\nAir Transport\nBlow Out\nFlow Rate\nMix Flow\nOver Asp\nSettling Time\nSwap Speed\n********Dispense***********\nAir Transport\nBlowOut\nMix Flow\nFlow Rate\nSettling\nStopback\nStopFlow\nSwap Speed\n"));
    FAspAirTransport = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    FAspBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    FAspFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    FAspMixFlow = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
    FAspOverAsp = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
    FAspSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    FAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    FDispAirTranspo = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
    FDispBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
    FDispFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    FDispmixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    FDispSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    FDispStopbackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
    FDispStopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
    FDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    FAspAirTransport = xTenTurnToString(FAspAirTransport, 3);
    FAspBlowOut = xTenTurnToString(FAspBlowOut, 5);
    FAspFlowRate = xTenTurnToString(FAspFlowRate, 4);
    FAspMixFlow = xTenTurnToString(FAspMixFlow, 4);
    FAspOverAsp = xTenTurnToString(FAspOverAsp, 5);
    FAspSettlingTime = xTenTurnToString(FAspSettlingTime, 2);
    FAspSwapSpeed = xTenTurnToString(FAspSwapSpeed, 4);
    FDispAirTranspo = xTenTurnToString(FDispAirTranspo, 3);
    FDispBlowOut = xTenTurnToString(FDispBlowOut, 5);
    FDispmixFlowRate = xTenTurnToString(FDispmixFlowRate, 4);
    FDispFlowRate = xTenTurnToString(FDispFlowRate, 4);
    FDispSettlingTime = xTenTurnToString(FDispSettlingTime, 2);
    FDispStopbackVolume = xTenTurnToString(FDispStopbackVolume, 3);
    FDispStopFlowRate = xTenTurnToString(FDispStopFlowRate, 4);
    FDispSwapSpeed = xTenTurnToString(FDispSwapSpeed, 4);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(System, _LabwareID, fLabX, fLabY, fLabZ, fLabRZ);
    fLabX = xTenTurnToString(fLabX, 5);
    fLabY = xTenTurnToString(fLabY, 4);
    _FixedHeightDuringAsp = _FixedHeightDuringAsp + fLabZ;
    _fixedHeightDuringDispense = _fixedHeightDuringDispense + fLabZ;
    _LLDSearchHeight = _LLDSearchHeight + fLabZ;
    _FixedHeightDuringAsp = xTenTurnToString(_FixedHeightDuringAsp, 4);
    _fixedHeightDuringDispense = xTenTurnToString(_fixedHeightDuringDispense, 4);
    _LLDSearchHeight = xTenTurnToString(_LLDSearchHeight, 4);
    fLabZ = xTenTurnToString(fLabZ, 4);
    Aspirate = Translate("C0EA");
    Dispense = Translate("C0ED");
    _aa = Translate("aa0");
    _ag = Translate("ag") + FAspFlowRate;
    _bs = Translate("bs") + FAspSwapSpeed;
    if (_bv == "")
    {
      _bv = Translate("bv") + FAspBlowOut;
    }
    if (_vt == "")
    {
      _vt = Translate("vt") + FAspAirTransport;
    }
    _cw = Translate("cw") + Translate("FFFFFFFFFFFFFFFFFFFFFFFF");
    _hs = Translate("hs") + FAspMixFlow;
    _wh = Translate("wh") + FAspSettlingTime;
    _wh = Translate("wh") + FAspSettlingTime;
    _xd = Translate("xd") + Translate("0");
    _xs = Translate("xs") + fLabX;
    _yh = Translate("yh") + fLabY;
    _zt = Translate("zt") + _FixedHeightDuringAsp;
    if (_GotoTraverseBeforeAsp == 1)
    {
      _zh = Translate("zh2450");
    }
    else
    {
      _zh = Translate("zh") + _FixedHeightDuringAsp;
    }
    if (_GotoTraverseAfterAsp == 1)
    {
      _ze = Translate("ze2450");
    }
    else
    {
      _ze = Translate("ze") + _FixedHeightDuringAsp;
    }
    _lz = Translate("lz") + _LLDSearchHeight;
    _zm = Translate("zm") + fLabZ;
    arrAspFWcmd.SetSize(0);
    arrAspFWcmd.AddAsLast(_aa);
    arrAspFWcmd.AddAsLast(_af);
    arrAspFWcmd.AddAsLast(_ag);
    arrAspFWcmd.AddAsLast(_bs);
    arrAspFWcmd.AddAsLast(_bv);
    arrAspFWcmd.AddAsLast(_cj);
    arrAspFWcmd.AddAsLast(_cm);
    arrAspFWcmd.AddAsLast(_cr);
    arrAspFWcmd.AddAsLast(_cs);
    arrAspFWcmd.AddAsLast(_cw);
    arrAspFWcmd.AddAsLast(_cx);
    arrAspFWcmd.AddAsLast(_fh);
    arrAspFWcmd.AddAsLast(_hc);
    arrAspFWcmd.AddAsLast(_hp);
    arrAspFWcmd.AddAsLast(_hs);
    arrAspFWcmd.AddAsLast(_hv);
    arrAspFWcmd.AddAsLast(_iw);
    arrAspFWcmd.AddAsLast(_ix);
    arrAspFWcmd.AddAsLast(_lz);
    arrAspFWcmd.AddAsLast(_mj);
    arrAspFWcmd.AddAsLast(_pp);
    arrAspFWcmd.AddAsLast(_vt);
    arrAspFWcmd.AddAsLast(_wh);
    arrAspFWcmd.AddAsLast(_wv);
    arrAspFWcmd.AddAsLast(_xd);
    arrAspFWcmd.AddAsLast(_xs);
    arrAspFWcmd.AddAsLast(_yh);
    arrAspFWcmd.AddAsLast(_ze);
    arrAspFWcmd.AddAsLast(_zh);
    arrAspFWcmd.AddAsLast(_zm);
    arrAspFWcmd.AddAsLast(_zq);
    arrAspFWcmd.AddAsLast(_zt);
    arrAspFWcmd.AddAsLast(_zv);
    _da = Translate("da3");
    if (_GotoTraverseHeightBeforeDisp == 1)
    {
      _zh = Translate("zh2450");
    }
    else
    {
      _zh = Translate("zh") + _fixedHeightDuringDispense;
    }
    if (_GotoTraverseHeightAfterDisp == 1)
    {
      _ze = Translate("ze2450");
    }
    else
    {
      _ze = Translate("ze") + _fixedHeightDuringDispense;
    }
    _zt = Translate("zt") + _fixedHeightDuringDispense;
    _dg = Translate("dg") + FDispFlowRate;
    _es = Translate("es") + FDispStopFlowRate;
    _ev = Translate("ev") + FDispStopbackVolume;
    _vt = Translate("vt") + FDispAirTranspo;
    if (_bvDispense == "")
    {
      _bvDispense = Translate("bv") + FDispBlowOut;
    }
    _bs = Translate("bs") + FDispSwapSpeed;
    _wh = Translate("wh") + FDispSettlingTime;
    arrDispFWcmd.SetSize(0);
    arrDispFWcmd.AddAsLast(_da);
    arrDispFWcmd.AddAsLast(_xs);
    arrDispFWcmd.AddAsLast(_xd);
    arrDispFWcmd.AddAsLast(_yh);
    arrDispFWcmd.AddAsLast(_zm);
    arrDispFWcmd.AddAsLast(_zv);
    arrDispFWcmd.AddAsLast(_zq);
    arrDispFWcmd.AddAsLast(_lz);
    arrDispFWcmd.AddAsLast(_zt);
    arrDispFWcmd.AddAsLast(_pp);
    arrDispFWcmd.AddAsLast(_iw);
    arrDispFWcmd.AddAsLast(_fh);
    arrDispFWcmd.AddAsLast(_zh);
    arrDispFWcmd.AddAsLast(_ze);
    arrDispFWcmd.AddAsLast(_df);
    arrDispFWcmd.AddAsLast(_dg);
    arrDispFWcmd.AddAsLast(_es);
    arrDispFWcmd.AddAsLast(_ev);
    arrDispFWcmd.AddAsLast(_vt);
    arrDispFWcmd.AddAsLast(_bvDispense);
    arrDispFWcmd.AddAsLast(_cm);
    arrDispFWcmd.AddAsLast(_cs);
    arrDispFWcmd.AddAsLast(_bs);
    arrDispFWcmd.AddAsLast(_wh);
    arrDispFWcmd.AddAsLast(_mj);
    arrDispFWcmd.AddAsLast(_cw);
    sAspCommand = arrAspFWcmd.ElementAt( 1 -1);
    sDispCommand = Translate("");
    {
      for(loopCounter4 = 0; loopCounter4 < 32;)
      {
        loopCounter4 = loopCounter4 + 1;
        LC = loopCounter4 + 1;
        sAspCommand = sAspCommand + arrAspFWcmd.ElementAt( LC -1);
      }
    }
    {
      for(loopCounter7 = 0; loopCounter7 < 26;)
      {
        loopCounter7 = loopCounter7 + 1;
        sDispCommand = sDispCommand + arrDispFWcmd.ElementAt( loopCounter7 -1);
      }
    }
    TrcTrace(Translate("Aspirate FW command -- "), sAspCommand);
    TrcTrace(Translate("Dispense FW command -- "), sDispCommand);
    if (_Aspirate == 1)
    {
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (_Dispense == 1)
    {
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
} // library namespace
