 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "IVT DOE Deck.res"
variable int_Samples;
variable loopCounterPipette;
variable loopCounterFileRead;
variable int_Counter;
variable ar_WaterVolume[];
variable ar_DNAVolume[];
global device ML_STAR ("IVT DOE Deck.lay", "ML_STAR", hslTrue);
variable fileConcentrations_Tris_pH_8;
variable int_Height;
variable float_T7;
variable float_Spermidine;
variable float_IPP;
variable float_RNAseInhibitor;
variable fileConcentrations_CleanCap;
variable fileConcentrations_Water;
variable fileConcentrations_MgCl2;
variable fileConcentrations_DNA;
variable fileConcentrations_NTP;
variable float_DTT;
variable fileConcentrations_Tris_pH_7;
file fileDOE;
variable ar_CleanCapVolume[];
variable ar_Tris8Volume[];
variable ar_Tris7Volume[];
variable ar_MgCl2Volume[];
variable ar_NTPVolume[];
dialog dialogHandle1;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle2;
dialog dialogHandle_3;
dialog dialogHandle3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    dialogHandle_3.SetInputSize(1);
    dialogHandle_3.SetInputField(0, Translate("How many DOE"), hslInteger, 58, 1, 58);
    dialogHandle_3.ShowInput(Translate("Sample Number"), hslInfinite, hslOKOnly | hslDefButton1);
    int_Samples = dialogHandle_3.GetInputField(0);
    TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR, 999);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    float_DTT = 1.5;
    float_Spermidine = 1;
    float_IPP = 1;
    float_RNAseInhibitor = 2.5;
    float_T7 = 14;
    int_Height = 8.5;
    ar_WaterVolume.SetSize(int_Samples);
    ar_Tris7Volume.SetSize(int_Samples);
    ar_Tris8Volume.SetSize(int_Samples);
    ar_MgCl2Volume.SetSize(int_Samples);
    ar_NTPVolume.SetSize(int_Samples);
    ar_CleanCapVolume.SetSize(int_Samples);
    ar_DNAVolume.SetSize(int_Samples);
    fileDOE.AddField("Water", fileConcentrations_Water, hslFloat);
    fileDOE.AddField("Tris pH 7", fileConcentrations_Tris_pH_7, hslFloat);
    fileDOE.AddField("Tris pH 8", fileConcentrations_Tris_pH_8, hslFloat);
    fileDOE.AddField("MgCl2", fileConcentrations_MgCl2, hslFloat);
    fileDOE.AddField("NTP", fileConcentrations_NTP, hslFloat);
    fileDOE.AddField("DNA", fileConcentrations_DNA, hslFloat);
    fileDOE.AddField("CleanCap", fileConcentrations_CleanCap, hslFloat);
    if( 0 == fileDOE.Open("C:\\Users\\Strand TFF\\Desktop\\IVT DOE JMP Design mIL12.xls" + " " + "Reaction_Setup$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\Strand TFF\\Desktop\\IVT DOE JMP Design mIL12.xls", "HxMetEdCompCmd");
    }
    {
      for(loopCounterFileRead = 0; loopCounterFileRead < int_Samples;)
      {
        loopCounterFileRead = loopCounterFileRead + 1;
        if( 0 == fileDOE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ar_WaterVolume.SetAt(loopCounterFileRead-1, fileConcentrations_Water);
        ar_Tris7Volume.SetAt(loopCounterFileRead-1, fileConcentrations_Tris_pH_7);
        ar_Tris8Volume.SetAt(loopCounterFileRead-1, fileConcentrations_Tris_pH_8);
        ar_MgCl2Volume.SetAt(loopCounterFileRead-1, fileConcentrations_MgCl2);
        ar_NTPVolume.SetAt(loopCounterFileRead-1, fileConcentrations_NTP);
        ar_DNAVolume.SetAt(loopCounterFileRead-1, fileConcentrations_DNA);
        ar_CleanCapVolume.SetAt(loopCounterFileRead-1, fileConcentrations_CleanCap);
      }
    }
    if( 0 != fileDOE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileDOE.RemoveFields();
    ML_STAR.PCR_Destination.SetCount(int_Samples);
    MECC::TraceComment(Translate("Aliquot Water"));
    int_Counter = 1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Destination, 1, ML_STAR.Water, 1, ML_STAR.MlStar1000ulHighVolumeTip, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.Water.SetMax(ML_STAR.Water.GetTotal());
      ML_STAR.MlStar1000ulHighVolumeTip.SetMax(ML_STAR.MlStar1000ulHighVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.Water.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("Aliquot Tris pH 7"));
    int_Counter = 1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Destination, 1, ML_STAR.Tris_pH7, 1, ML_STAR.MlStar10ulLowVolumeTip, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.Tris_pH7.SetMax(ML_STAR.Tris_pH7.GetTotal());
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.Tris_pH7.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("Aliquot Tris pH 8"));
    int_Counter = 1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.Tris_pH8, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.Tris_pH8.SetMax(ML_STAR.Tris_pH8.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.Tris_pH8.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("Aliquot MgCl2"));
    int_Counter = 1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MgCl2, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MgCl2.SetMax(ML_STAR.MgCl2.GetTotal());
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.MgCl2.SetCurrentPosition(1);
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("Aliquot DTT"));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle2.SetOutput(Translate("Please open the DTT Tube"));
    dialogHandle2.ShowOutput(Translate("Open DTT"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DTT, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DTT.SetMax(ML_STAR.DTT.GetTotal());
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.DTT.SetCurrentPosition(1);
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_2.SetOutput(Translate("Please close the DTT Tube"));
    dialogHandle_2.ShowOutput(Translate("Open DTT"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if(0){
      MECC::TraceComment(Translate("Aliquot Spermidine"));
      int_Counter = 1;
      {
        loopCounterPipette = 0;
        while (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.Spermidine, 1);
          loopCounterPipette = loopCounterPipette + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          int_Counter = int_Counter + 8;
          if (
             (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
        ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
        ML_STAR.Spermidine.SetMax(ML_STAR.Spermidine.GetTotal());
        ML_STAR.PCR_Destination.SetCurrentPosition(1);
        ML_STAR.Spermidine.SetCurrentPosition(1);
      }
    }
    if(0){
      MECC::TraceComment(Translate("Aliquot ATP"));
      int_Counter = 1;
      {
        loopCounterPipette = 0;
        while (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.ATP, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
          loopCounterPipette = loopCounterPipette + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          int_Counter = int_Counter + 8;
          if (
             (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.ATP.SetMax(ML_STAR.ATP.GetTotal());
        ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
        ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
        ML_STAR.ATP.SetCurrentPosition(1);
        ML_STAR.PCR_Destination.SetCurrentPosition(1);
      }
      MECC::TraceComment(Translate("Aliquot CTP"));
      int_Counter = 1;
      {
        loopCounterPipette = 0;
        while (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.CTP, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
          loopCounterPipette = loopCounterPipette + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          int_Counter = int_Counter + 8;
          if (
             (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.CTP.SetMax(ML_STAR.CTP.GetTotal());
        ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
        ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
        ML_STAR.CTP.SetCurrentPosition(1);
        ML_STAR.PCR_Destination.SetCurrentPosition(1);
      }
      TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR);
      TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR);
      TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR, 999);
      TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR, 999);
      MECC::TraceComment(Translate("Aliquot GTP"));
      int_Counter = 1;
      {
        loopCounterPipette = 0;
        while (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.GTP, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
          loopCounterPipette = loopCounterPipette + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          int_Counter = int_Counter + 8;
          if (
             (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.GTP.SetMax(ML_STAR.GTP.GetTotal());
        ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
        ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
        ML_STAR.GTP.SetCurrentPosition(1);
        ML_STAR.PCR_Destination.SetCurrentPosition(1);
      }
      MECC::TraceComment(Translate("Aliquot UTP"));
      int_Counter = 1;
      {
        loopCounterPipette = 0;
        while (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.UTP, 1);
          loopCounterPipette = loopCounterPipette + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          int_Counter = int_Counter + 8;
          if (
             (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
        ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
        ML_STAR.UTP.SetMax(ML_STAR.UTP.GetTotal());
        ML_STAR.PCR_Destination.SetCurrentPosition(1);
        ML_STAR.UTP.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("Aliquot NTPs"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTip, 1, ML_STAR.NTP, 1, ML_STAR.PCR_Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTip.SetMax(ML_STAR.MlStar1000ulHighVolumeTip.GetTotal());
      ML_STAR.NTP.SetMax(ML_STAR.NTP.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.NTP.SetCurrentPosition(1);
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot CleanCap"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.CleanCap, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.CleanCap.SetMax(ML_STAR.CleanCap.GetTotal());
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.CleanCap.SetCurrentPosition(1);
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot DNA"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DNA, 1, ML_STAR.MlStar1000ulHighVolumeTip, 1, ML_STAR.PCR_Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DNA.SetMax(ML_STAR.DNA.GetTotal());
      ML_STAR.MlStar1000ulHighVolumeTip.SetMax(ML_STAR.MlStar1000ulHighVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.DNA.SetCurrentPosition(1);
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
    }
    dialogHandle3.SetOutput(Translate("Load Frozen Reagents"));
    dialogHandle3.ShowOutput(Translate("Load Frozen Reagents"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    MECC::TraceComment(Translate("Aliquot RNAse Inhibitor"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.RNAse_Inhib, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.RNAse_Inhib.SetMax(ML_STAR.RNAse_Inhib.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.RNAse_Inhib.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot IPP"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.IPP, 1, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.IPP.SetMax(ML_STAR.IPP.GetTotal());
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.IPP.SetCurrentPosition(1);
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot T7"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.T7, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTip.SetMax(ML_STAR.MlStar1000ulHighVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.T7.SetMax(ML_STAR.T7.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.T7.SetCurrentPosition(1);
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR);
  } }
