 namespace _Method { #include "96WellHeadController\\96 Head FW Command.hs_" }
 namespace _Method { #include "HSLVacuuBrandPump.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "Plasmid Purification\\Libraries\\biotagePlasmidPurification_dialogsController.hs_" }
 namespace _Method { #include "VirtualLabware_V2\\VirtualLabware_V2.hsl" }
 namespace _Method { #include "SetCuttedTipType_Universal_V2\\SetCuttedTipType_Universal_V2.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
#include "Biotage_PlasmidPurification.res"
global device ML_STAR ("Biotage_PlasmidPurification.lay", "ML_STAR", hslTrue);
variable t_str_liquidClassAir;
variable t_str_liquidClassWash;
variable t_str_liquidClassLysisMixFast;
variable t_str_liquidClassElution;
variable t_str_liquidClassPhyTips;
variable t_str_liquidClassLysisMix;
variable t_str_liquidClassLysis;
variable t_str_liquidClassEQ;
variable t_str_liquidClassCapture;
variable t_int_vacuuPumpComPort;
variable t_int_vacuuPumpId;
variable t_bln_PerformSecondaryElution;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_bool_returnValue;
    private variable l_int_elutionVolume;
    private variable l_int_resinVolume;
    _96_HEAD_FW_COMMAND::_InitLibrary();
    BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::_InitLibrary();
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    l_bool_returnValue = initializeSystem();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::getUserInput(l_int_resinVolume, l_int_elutionVolume, t_bln_PerformSecondaryElution);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::displayLoadingInstructions(l_int_elutionVolume);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    dialogHandle1.SetOutput(Translate("Turn on the Vaccuum line"));
    dialogHandle1.ShowOutput(Translate("Vacuum Reminder"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    l_bool_returnValue = prepareProcessingPlates(l_int_elutionVolume);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeResuspension();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeLysis();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePrecipitation();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePhyTipEquilibration();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePhyTipBlot(1);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeSampleCapture();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePhyTipBlot(2);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeWash1();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePhyTipsDry(120);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeSampleCapture2();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePhyTipBlot(2);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeWash2();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executePhyTipsDry(900);
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    l_bool_returnValue = executeElution();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    if(0){
      HSLVacuuBrandPump::Terminate(t_int_vacuuPumpId);
    }
    l_bool_returnValue = BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::displayMethodCompleteDialog();
    if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    _96_HEAD_FW_COMMAND::_ExitLibrary();
    BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::_ExitLibrary();
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_ExitLibrary();
  } }
