 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Ribogreen.res"
variable loopCounter1;
global device ML_STAR ("Ribogreen.lay", "ML_STAR", hslTrue);
variable loopCounter2(1);
variable Columncounter;
variable loopCounter7;
variable ArraySize;
variable file1_Name;
file file1;
variable file1_DilutionFactor;
global variable dilutionVol(400);
variable DiluentVolume;
variable SampleVol;
variable SampleDilArray[];
variable SampleSampArray[];
dialog dialogHandle_1;
variable loopCounter9;
variable Index;
dialog dialogHandle9;
variable loopCounter10;
dialog dialogHandle_2;
variable StandardVolumeFilter_Water_DispenseSurface_Empty_FASTMIX;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    SampleSampArray.SetSize(0);
    SampleDilArray.SetSize(0);
    dialogHandle_2.SetInputSize(1);
    dialogHandle_2.SetInputField(0, Translate("Insert Path to Sample File"), hslString, "C:\Users\Hamilton\Desktop\RibogreenDilutionTestDD21Jan22.xls");
    dialogHandle_2.ShowInput(Translate("File Input"), hslInfinite, hslOKOnly | hslDefButton1);
    file1_Name = dialogHandle_2.GetInputField(0);
    file1.AddField("Dilution Factor", file1_DilutionFactor, hslFloat);
    if( 0 == file1.Open(file1_Name + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file1_Name, "HxMetEdCompCmd");
    }
    {
      loopCounter7 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter7 = loopCounter7 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        DiluentVolume = 0;
        dilutionVol = 400;
        SampleVol = dilutionVol / (file1_DilutionFactor * 1.0);
        DiluentVolume = dilutionVol - SampleVol;
        SampleSampArray.AddAsLast(SampleVol);
        SampleDilArray.AddAsLast(DiluentVolume);
        dialogHandle_1.SetOutput(SampleDilArray.ElementAt( loopCounter7 -1), "\n", SampleSampArray.ElementAt( loopCounter7 -1));
        dialogHandle_1.ShowOutput(Translate("Output"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000uLTips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300uLTips"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000uLTips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300uLTips"), ML_STAR, 999);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR.TE_Standard_DWP.SetCurrentPosition(1);
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      for(loopCounter1 = 0; loopCounter1 < 6;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR.DWPDestinationCol.SetCurrentPosition(loopCounter1);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ArraySize=SampleSampArray.GetSize();
    ML_STAR.Samples1_8Source.SetCount(ArraySize);
    ML_STAR.SamplesDil2.SetCount(ArraySize);
    ML_STAR.SamplesDil1.SetCount(ArraySize);
    dialogHandle9.SetOutput(ArraySize);
    dialogHandle9.ShowOutput(Translate("OUtput"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      loopCounter9 = 0;
      while (
         (ML_STAR.SamplesDil1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SamplesDil1, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.TE, 1);
        loopCounter9 = loopCounter9 + 1;
        Index = loopCounter9 - 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SamplesDil1.GetCurrentPosition() > 0 && ML_STAR.SamplesDil1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SamplesDil1.SetMax(ML_STAR.SamplesDil1.GetTotal());
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.TE.SetMax(ML_STAR.TE.GetTotal());
      ML_STAR.SamplesDil1.SetCurrentPosition(1);
    }
    {
      loopCounter9 = 0;
      while (
         (ML_STAR.SamplesDil2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.TE, 1, ML_STAR.SamplesDil2, 1);
        loopCounter9 = loopCounter9 + 1;
        Index = loopCounter9 - 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SamplesDil2.GetCurrentPosition() > 0 && ML_STAR.SamplesDil2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.TE.SetMax(ML_STAR.TE.GetTotal());
      ML_STAR.SamplesDil2.SetMax(ML_STAR.SamplesDil2.GetTotal());
      ML_STAR.SamplesDil2.SetCurrentPosition(1);
    }
    {
      loopCounter10 = 0;
      ML_STAR.SamplesDil1.SetCurrentPosition(1);
      while (
         (ML_STAR.SamplesDil1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.Samples1_8Source, 1, ML_STAR.SamplesDil1, 1);
        loopCounter10 = loopCounter10 + 1;
        Index = loopCounter9 - 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SamplesDil1.GetCurrentPosition() > 0 && ML_STAR.SamplesDil1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      ML_STAR.Samples1_8Source.SetMax(ML_STAR.Samples1_8Source.GetTotal());
      ML_STAR.SamplesDil1.SetMax(ML_STAR.SamplesDil1.GetTotal());
    }
    {
      loopCounter10 = 0;
      ML_STAR.SamplesDil1.SetCurrentPosition(1);
      while (
         (ML_STAR.SamplesDil2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.SamplesDil1, 1, ML_STAR.SamplesDil2, 1);
        loopCounter10 = loopCounter10 + 1;
        Index = loopCounter9 - 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SamplesDil2.GetCurrentPosition() > 0 && ML_STAR.SamplesDil2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      ML_STAR.SamplesDil1.SetMax(ML_STAR.SamplesDil1.GetTotal());
      ML_STAR.SamplesDil2.SetMax(ML_STAR.SamplesDil2.GetTotal());
      ML_STAR.SamplesDil2.SetCurrentPosition(1);
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTECurve.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTESample.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTxCurve.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTXSample.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTECurve.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTxCurve.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTESample.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTXSample.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTECurve.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTESample.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTxCurve.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    Columncounter = 1;
    {
      for(loopCounter2 = 0; loopCounter2 < 3;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.FinalPlateTXSample.SetCurrentPosition(Columncounter);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        Columncounter = Columncounter + 8;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000uLTips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300uLTips"), ML_STAR);
  } }
