private function _versionHistory(  ) void ;
private function executeElution(  ) variable ;
private function executeLysis(  ) variable ;
private function executePhyTipBlot( variable i_int_blottingStationNumber ) variable ;
private function executePhyTipEquilibration(  ) variable ;
private function executePhyTipsDry( variable i_int_vacuumDryDurationTime ) variable ;
private function executePrecipitation(  ) variable ;
private function executeResuspension(  ) variable ;
private function executeSampleCapture(  ) variable ;
private function executeSampleCapture2(  ) variable ;
private function executeWash1(  ) variable ;
private function executeWash2(  ) variable ;
private function initializeSystem(  ) variable ;
private function prepareProcessingPlates( variable i_int_elutionVolumePerSample ) variable ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  if(0){
    HSLVacuuBrandPump::StopPumpImmediatly(t_int_vacuuPumpId);
    HSLVacuuBrandPump::Terminate(t_int_vacuuPumpId);
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  }
}

private function initializeSystem(  ) variable {
  private variable l_str_functionName;
  private variable l_str_methodName;
  private variable l_int_returnValue;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  }
  t_str_liquidClassPhyTips = Translate("_Phynexus_1000s");
  t_str_liquidClassLysis = Translate("HighVolume_96COREHead1000ul_Lysis");
  t_str_liquidClassLysisMix = Translate("HighVolume_96COREHead1000ul_Lysis_AspDisp_Mix");
  t_str_liquidClassLysisMixFast = Translate("HighVolume_96COREHead1000ul_Lysis_FastTest");
  t_str_liquidClassEQ = Translate("_Phynexus_1000s_Plasmid_Purification_Equiilib");
  t_str_liquidClassWash = Translate("_Phynexus_1000s_Plasmid_Purification_Wash");
  t_str_liquidClassElution = Translate("_Phynexus_1000s_Plasmid_Purification_Elution");
  t_str_liquidClassCapture = Translate("_Phynexus_1000s_Plasmid_Purification_Capture");
  t_str_liquidClassAir = Translate("_Phynexus_1000s_Plasmid_Purification_AspirateAir");
  t_int_vacuuPumpComPort = 25;
  t_int_vacuuPumpId = 1;
  if(0){
    l_int_returnValue = HSLVacuuBrandPump::Initialize(t_int_vacuuPumpId, t_int_vacuuPumpComPort);
  }
  if (l_int_returnValue == 3)
  {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, l_str_functionName, l_str_methodName, Translate("Fatal Error: Could not establish communication with the VacuuBrand Pump"));
    return (ASWGLOBAL::BOOL::FALSE);
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function _versionHistory(  ) void {
}

private function prepareProcessingPlates( variable i_int_elutionVolumePerSample ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_index_washBufferTransferNumber;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Now preparing the Wash Plates"), Translate(""));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  {
    l_index_washBufferTransferNumber = 0;
    while (
       (ML_STAR.g_seq_washPlatesAll.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.g_seq_washPlatesAll, 1);
      l_index_washBufferTransferNumber = l_index_washBufferTransferNumber + 1;
      if (l_index_washBufferTransferNumber == 1)
      {
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      }
      else
      {
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      }
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      if (
         (ML_STAR.g_seq_washPlatesAll.GetCurrentPosition() > 0 && ML_STAR.g_seq_washPlatesAll.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.g_seq_washPlatesAll.SetMax(ML_STAR.g_seq_washPlatesAll.GetTotal());
    ML_STAR.g_seq_washPlatesAll.SetCurrentPosition(1);
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Now preparing the Elution Plate"), Translate(""));
  TRACELEVEL::TraceSequence(2, ML_STAR.g_seq_elutionPlate1);
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  if (t_bln_PerformSecondaryElution == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeResuspension(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_index_resuspendCellPellets;
  private variable l_bool_returnValue;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByDiameter(ML_STAR, 4, 3.2);
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  {
    l_index_resuspendCellPellets = 0;
    while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
    {
      l_index_resuspendCellPellets = l_index_resuspendCellPellets + 1;
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, -0.75, 0, 0);
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, 1.5, 0, 0);
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, -0.75, 0, 0);
      l_bool_returnValue = BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::queryCellPelletResuspensionState();
      if (l_bool_returnValue == ASWGLOBAL::BOOL::TRUE)
      {
        break;
      }
    }
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeLysis(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_index_lysisMixPart1CycleNumber;
  private variable l_bool_executeAspirate;
  private variable l_bool_goToTraverseHeight;
  private variable l_index_lysisMixPart2CycleNumber;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByDiameter(ML_STAR, 4, 3.2);
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  {
    for(l_index_lysisMixPart1CycleNumber = 0; l_index_lysisMixPart1CycleNumber < 6;)
    {
      l_index_lysisMixPart1CycleNumber = l_index_lysisMixPart1CycleNumber + 1;
      if (l_index_lysisMixPart1CycleNumber == 1)
      {
        l_bool_goToTraverseHeight = 1;
        l_bool_executeAspirate = 0;
      }
      else
      {
        l_bool_goToTraverseHeight = 0;
        l_bool_executeAspirate = 1;
      }
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), l_bool_executeAspirate, 1, l_bool_goToTraverseHeight, 0, 30, 2, 33.3, 33.3, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 180, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 2, 0, 0, 180, 5, ML_STAR, ML_STAR.g_seq_cellPellets, Translate(""), Translate(""), 1, 2);
    }
  }
  {
    for(l_index_lysisMixPart2CycleNumber = 0; l_index_lysisMixPart2CycleNumber < 5;)
    {
      l_index_lysisMixPart2CycleNumber = l_index_lysisMixPart2CycleNumber + 1;
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, 2.7, 0, -6);
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 0, 0, 0, 20, 42, 33.3, 0.0, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 20, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 3, 0, 0, 0, 42, ML_STAR, ML_STAR.g_seq_cellPellets, Translate(""), Translate(""), 1, 3);
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, -5.4, 0, -6);
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 0, 0, 0, 20, 42, 33.3, 0.0, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 20, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 3, 0, 0, 0, 42, ML_STAR, ML_STAR.g_seq_cellPellets, Translate(""), Translate(""), 1, 3);
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, 2.7, 2.7, -6);
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 0, 0, 0, 20, 42, 33.3, 0.0, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 20, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 3, 0, 0, 0, 42, ML_STAR, ML_STAR.g_seq_cellPellets, Translate(""), Translate(""), 1, 3);
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, 0, -5.4, -6);
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 0, 0, 0, 20, 42, 33.3, 0.0, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 20, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 3, 0, 0, 0, 42, ML_STAR, ML_STAR.g_seq_cellPellets, Translate(""), Translate(""), 1, 3);
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_cellPellets, 0, 2.7, -6);
    }
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executePrecipitation(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_index_precipitationSampleMixNumber;
  private variable l_str_blowoutParameter;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByDiameter(ML_STAR, 4, 3.2);
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  {
    for(l_index_precipitationSampleMixNumber = 0; l_index_precipitationSampleMixNumber < 7;)
    {
      l_index_precipitationSampleMixNumber = l_index_precipitationSampleMixNumber + 1;
      if (l_index_precipitationSampleMixNumber == 1)
      {
        l_str_blowoutParameter = Translate("bv01000");
      }
      else
      {
        l_str_blowoutParameter = Translate("bv00000");
      }
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 2, 8, 8, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 300, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 5, 0, 0, 300, 6, ML_STAR, ML_STAR.g_seq_cellPellets, l_str_blowoutParameter, Translate(""), 1, 5);
    }
  }
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 5, 8, 8, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 300, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 10, 0, 0, 300, 6, ML_STAR, ML_STAR.g_seq_cellPellets, Translate(""), Translate("bv01000"), 1, 10);
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 28, 8, 8, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 0, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassLysisMix, 0, 0, 1, 0, 5, ML_STAR, ML_STAR.g_seq_cellPellets, Translate("bv00000"), Translate("bv00000"), 1, 0);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  if(0){
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executePhyTipEquilibration(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByLength(ML_STAR, 4, 13.3);
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 1, 0, 30, 1.0, 222, 222, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 450, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassEQ, 10, 0, 0, 450, 1.0, ML_STAR, ML_STAR.g_seq_reagentTroughEquilibration, Translate("bv00500"), Translate("bv00300"), 1, 10);
  _96_HEAD_FW_COMMAND::_96HeadTraverseHeight(ML_STAR);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executePhyTipBlot( variable i_int_blottingStationNumber ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private sequence l_seq_blottingStation;
  private variable l_str_blowoutVolume;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  if (i_int_blottingStationNumber == 1)
  {
    SeqCopySequence(l_seq_blottingStation, ML_STAR.g_seq_blottingStation1);
    l_str_blowoutVolume = Translate("bv00200");
  }
  else
  {
    SeqCopySequence(l_seq_blottingStation, ML_STAR.g_seq_blottingStation2);
    l_str_blowoutVolume = Translate("bv00000");
  }
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 1, 0, 30, 1.0, 222, 222, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 0, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassEQ, 10, 0, 1, 0, 1.0, ML_STAR, l_seq_blottingStation, Translate("bv00000"), l_str_blowoutVolume, 1, 10);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeSampleCapture(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_index_sampleCaptureMixNumber;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 1, 0, 30, 45, 4, 8, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 500, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassAir, 15, 0, 0, 300, 1.0, ML_STAR, ML_STAR.g_seq_cellPellets, Translate("bv00000"), Translate("bv00000"), 1, 10);
  {
    for(l_index_sampleCaptureMixNumber = 0; l_index_sampleCaptureMixNumber < 7;)
    {
      l_index_sampleCaptureMixNumber = l_index_sampleCaptureMixNumber + 1;
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 1.0, 4, 4, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 230, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassCapture, 10, 0, 0, 230, 1.0, ML_STAR, ML_STAR.g_seq_cellPellets, Translate("bv00000"), Translate("bv00000"), 1, 10);
    }
  }
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 1.0, 4, 4, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 230, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassCapture, 10, 0, 0, 380, 1.0, ML_STAR, ML_STAR.g_seq_cellPellets, Translate("bv00000"), Translate("bv00000"), 1, 10);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeWash1(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_index_wash1MixNumber;
  private variable l_bool_traverseHeightBeforeAsp;
  private variable l_bool_traverseHeightAfterDisp;
  private variable l_int_dispenseVolume;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  {
    for(l_index_wash1MixNumber = 0; l_index_wash1MixNumber < 3;)
    {
      l_index_wash1MixNumber = l_index_wash1MixNumber + 1;
      l_bool_traverseHeightBeforeAsp = 0;
      l_bool_traverseHeightAfterDisp = 0;
      l_int_dispenseVolume = 450;
      if (l_index_wash1MixNumber == 1)
      {
        l_bool_traverseHeightBeforeAsp = 1;
      }
      if (l_index_wash1MixNumber == 3)
      {
        l_int_dispenseVolume = 500;
        l_bool_traverseHeightAfterDisp = 1;
      }
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, l_bool_traverseHeightBeforeAsp, 0, 30, 1.0, 100, 300, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 450, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassWash, 10, 0, l_bool_traverseHeightAfterDisp, l_int_dispenseVolume, 1.0, ML_STAR, ML_STAR.g_seq_wash1Plate, Translate("bv00000"), Translate("bv00000"), 1, 10);
    }
  }
  l_int_dispenseVolume = 450;
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 28, 100, 300, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 0, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassWash, 1, 0, 1, 0, 15.0, ML_STAR, ML_STAR.g_seq_wash1Plate, Translate("bv00000"), Translate("bv00000"), 1, 1);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executePhyTipsDry( variable i_int_vacuumDryDurationTime ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_int_returnValue;
  private variable l_index_rescueVacuuPumpError;
  private variable l_bool_returnValue;
  private timer timer1;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_tipsPhyTipsAtDryingStation, 0, 0, -2);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.g_seq_tipsPhyTipsAtDryingStation, 0, 0, 2);
  if( 0 == timer1.SetTimer(i_int_vacuumDryDurationTime) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if(0){
    l_int_returnValue = HSLVacuuBrandPump::StartPressureControl(t_int_vacuuPumpId, 1060, i_int_vacuumDryDurationTime, Translate("y"), 1);
    if (l_int_returnValue == 3)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, l_str_functionName, l_str_methodName, Translate("Fatal Error: Unable to dry the PhyTips at the drying station"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    {
      l_index_rescueVacuuPumpError = 0;
      while (l_int_returnValue == 3)
      {
        l_index_rescueVacuuPumpError = l_index_rescueVacuuPumpError + 1;
        l_bool_returnValue = BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER::displayWarningMessage(Translate("VaccuPump Device Error"), Translate("The VacuuPump device encountered an error while trying to dry the PhyTips. Please ensure that all the cables are still connected and the device is powered on, then click 'Ok' to continue or 'Cancel' to abort the current run"));
        if (l_bool_returnValue == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate("Fatal Error: displayWarningMessage encountered a fatal error"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
        l_int_returnValue = HSLVacuuBrandPump::Initialize(t_int_vacuuPumpId, t_int_vacuuPumpComPort);
        l_int_returnValue = HSLVacuuBrandPump::StartPressureControl(t_int_vacuuPumpId, 1060, i_int_vacuumDryDurationTime, Translate("y"), 1);
      }
    }
    l_int_returnValue = HSLVacuuBrandPump::WaitForPumpStopped(t_int_vacuuPumpId);
    if (l_int_returnValue == 3)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, l_str_functionName, l_str_methodName, Translate("Fatal Error: Unable to dry the PhyTips at the drying station"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }
  SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByLength(ML_STAR, 4, 13.3);
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeSampleCapture2(  ) variable {
  private variable l_index_sampleCaptureMixNumber;
  private variable l_str_methodName;
  private variable l_str_functionName;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 1, 0, 30, 45, 4, 8, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 500, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassAir, 15, 0, 0, 450, 1.0, ML_STAR, ML_STAR.g_seq_cellPellets, Translate("bv00000"), Translate("bv00000"), 1, 15);
  {
    for(l_index_sampleCaptureMixNumber = 0; l_index_sampleCaptureMixNumber < 8;)
    {
      l_index_sampleCaptureMixNumber = l_index_sampleCaptureMixNumber + 1;
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 1.0, 4, 4, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 230, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassCapture, 10, 0, 0, 230, 1.0, ML_STAR, ML_STAR.g_seq_cellPellets, Translate("bv00000"), Translate("bv00000"), 1, 10);
    }
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeWash2(  ) variable {
  private variable l_bool_traverseHeightBeforeAsp;
  private variable l_bool_traverseHeightAfterDisp;
  private variable l_str_methodName;
  private variable l_str_functionName;
  private variable l_int_dispenseVolume;
  private variable l_index_wash2MixNumber;
  private variable l_index_wash3MixNumber;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  {
    for(l_index_wash2MixNumber = 0; l_index_wash2MixNumber < 4;)
    {
      l_index_wash2MixNumber = l_index_wash2MixNumber + 1;
      l_bool_traverseHeightBeforeAsp = 0;
      l_bool_traverseHeightAfterDisp = 0;
      l_int_dispenseVolume = 450;
      if (l_index_wash2MixNumber == 1)
      {
        l_bool_traverseHeightBeforeAsp = 1;
      }
      if (l_index_wash2MixNumber == 4)
      {
        l_int_dispenseVolume = 500;
        l_bool_traverseHeightAfterDisp = 1;
      }
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, l_bool_traverseHeightBeforeAsp, 0, 30, 1.0, 100, 300, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 450, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassWash, 10, 0, l_bool_traverseHeightAfterDisp, l_int_dispenseVolume, 1.0, ML_STAR, ML_STAR.g_seq_wash2Plate, Translate("bv00000"), Translate("bv00000"), 1, 10);
    }
  }
  l_int_dispenseVolume = 450;
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 28, 100, 300, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 0, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassWash, 1, 0, 1, 0, 15.0, ML_STAR, ML_STAR.g_seq_wash2Plate, Translate("bv00000"), Translate("bv00000"), 1, 1);
  {
    for(l_index_wash3MixNumber = 0; l_index_wash3MixNumber < 4;)
    {
      l_index_wash3MixNumber = l_index_wash3MixNumber + 1;
      l_bool_traverseHeightBeforeAsp = 0;
      l_bool_traverseHeightAfterDisp = 0;
      l_int_dispenseVolume = 450;
      if (l_index_wash3MixNumber == 1)
      {
        l_bool_traverseHeightBeforeAsp = 1;
      }
      if (l_index_wash3MixNumber == 3)
      {
        l_int_dispenseVolume = 450;
        l_bool_traverseHeightAfterDisp = 1;
      }
      _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, l_bool_traverseHeightBeforeAsp, 0, 30, 1.0, 100, 300, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 450, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassWash, 10, 0, l_bool_traverseHeightAfterDisp, l_int_dispenseVolume, 1.0, ML_STAR, ML_STAR.g_seq_wash3Plate, Translate("bv00000"), Translate("bv00000"), 1, 10);
    }
  }
  l_int_dispenseVolume = 450;
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 0, 0, 30, 28, 100, 300, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 0, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassWash, 1, 0, 1, 0, 15.0, ML_STAR, ML_STAR.g_seq_wash3Plate, Translate("bv00000"), Translate("bv00000"), 1, 1);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}

private function executeElution(  ) variable {
  private variable l_str_methodName;
  private variable l_str_functionName;
  l_str_functionName = GetFunctionName();
  l_str_methodName = GetMethodFileName();
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
  _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 1, 0, 30, 1.0, 16, 16, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 300, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassElution, 300, 0, 0, 300, 1.0, ML_STAR, ML_STAR.g_seq_elutionPlate1, Translate("bv00000"), Translate("bv00000"), 1, 300);
  if (t_bln_PerformSecondaryElution == ASWGLOBAL::BOOL::TRUE)
  {
    _96_HEAD_FW_COMMAND::_96HeadAsp_Disp(Translate(""), 1, 1, 1, 0, 30, 1.0, 16, 16, Translate("pp0000"), Translate(""), Translate(""), Translate(""), 300, Translate(""), Translate("cm0"), Translate("cs1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_str_liquidClassElution, 300, 0, 0, 300, 1.0, ML_STAR, ML_STAR.g_seq_elutionPlate2, Translate("bv00000"), Translate("bv00000"), 1, 300);
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  return (ASWGLOBAL::BOOL::TRUE);
}
