 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler STAR\\HamiltonHeaterCoolerStar.hsl" }
#include "variable mRNA constant LNP.res"
variable intEndSeq;
variable loopCounter2;
variable intColumnsTotal;
variable loopCounter3;
variable floPlateNumber;
sequence arDestinationSeq[];
variable intPlateNumber;
sequence arRNASeq[];
sequence arLipidseq[];
variable arLipidVolume[];
variable str96HeadRemainder;
variable intPlateNumberDown;
variable intRemainder;
variable floRemainder;
variable intReverseRemainder;
dialog dialogHandle_1;
variable loopCounter7;
sequence arTipRemainderSeq[];
variable intRemainderColumn;
variable loopCounter4;
variable loopCounter5;
variable str8Channel;
variable loopCounter6;
variable file1_Lipid_3;
variable loopCounter8;
variable file1_Lipid_4;
variable file1_Ethanol;
variable file1_Lipid_5;
variable file1_Lipid_6;
variable file1_Lipid_1;
variable file1_Lipid_2;
file file1;
variable loopCounter9;
variable strFile;
dialog dialogHandle_2;
global device ML_STAR ("variable mRNA constant LNP.lay", "ML_STAR", hslTrue);
dialog dialogHandle_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    str8Channel = Translate("");
    str96HeadRemainder = Translate("");
    dialogHandle_3.SetInputSize(2);
    dialogHandle_3.SetInputField(0, Translate("Please Open the file"), hslString, "C:\\Users\\Hamilton\\Desktop\\Formulation.xls");
    dialogHandle_3.SetInputField(1, Translate("How many LNP columns are being made?"), hslInteger, 3, 1, 36);
    dialogHandle_3.ShowInput(Translate("start position"), hslInfinite, hslOKOnly | hslDefButton1);
    strFile = dialogHandle_3.GetInputField(0);
    intColumnsTotal = dialogHandle_3.GetInputField(1);
    arDestinationSeq.SetSize(0);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination1);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination2);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination3);
    arTipRemainderSeq.SetSize(0);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder1);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder2);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder3);
    intEndSeq = intColumnsTotal * 8;
    floPlateNumber = intEndSeq / (96 * 1.0);
    intPlateNumber = MthCeiling(floPlateNumber);
    intPlateNumberDown = MthFloor(floPlateNumber);
    floRemainder = floPlateNumber - intPlateNumberDown;
    intRemainderColumn = floRemainder * 12;
    intRemainder = floRemainder * 96;
    intReverseRemainder = 95 - intRemainder;
    ML_STAR.seqDestination.SetCount(intEndSeq);
    {
      for(loopCounter7 = 0; loopCounter7 < 96;)
      {
        loopCounter7 = loopCounter7 + 1;
        if (loopCounter7 <= intRemainder)
        {
          str96HeadRemainder = str96HeadRemainder + Translate("1");
        }
        else
        {
          str96HeadRemainder = str96HeadRemainder + Translate("0");
        }
      }
    }
    MECC::TraceComment(Translate("Tip Moving"));
    {
      for(loopCounter4 = 0; loopCounter4 < 3;)
      {
        loopCounter4 = loopCounter4 + 1;
        {
          for(loopCounter5 = 0; loopCounter5 < intRemainderColumn;)
          {
            loopCounter5 = loopCounter5 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
      }
    }
    ML_STAR.seq1000TipsRemainder1.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder2.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder3.SetCurrentPosition(1);
    if(0){
      dialogHandle_1.SetOutput(str96HeadRemainder);
      dialogHandle_1.ShowOutput(Translate("String Modification"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    MECC::TraceComment(Translate("Aliquot RNA"));
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.seqDestination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqDestination, 1, ML_STAR.seqRNA, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqDestination.GetCurrentPosition() > 0 && ML_STAR.seqDestination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      ML_STAR.seqDestination.SetMax(ML_STAR.seqDestination.GetTotal());
      ML_STAR.seqRNA.SetMax(ML_STAR.seqRNA.GetTotal());
      ML_STAR.seqDestination.SetCurrentPosition(1);
      ML_STAR.seqRNA.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot Citrate"));
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR.seqDestination.SetCurrentPosition(1);
    MECC::TraceComment(Translate("Formulate Particles"));
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR.seqDestination.SetCurrentPosition(1);
    MECC::TraceComment(Translate("Aliquot TBS"));
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  } }
