#include "Culture Removal.res"
global device ML_STAR ("Culture Removal.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  } }
