global device ML_STAR ("GoldenGateAssembly.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "GoldenGateAssembly.res"
variable intHeight;
variable loopCounter1;
variable loopCounter3;
variable intPlasmidVolume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    TipCount::Read2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("10uLTips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("50uLTips"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("10uLTips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, Translate("50uLTips"), ML_STAR, 999);
    intHeight = 0.25;
    intPlasmidVolume = 5;
    if(0){
      {
        loopCounter1 = 0;
        while (
           (ML_STAR.seqMastermixDestination.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.seqMastermixDestination, 1, ML_STAR.seqMastermixSource, 1);
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.seqMastermixDestination.GetCurrentPosition() > 0 && ML_STAR.seqMastermixDestination.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        ML_STAR.seqMastermixDestination.SetMax(ML_STAR.seqMastermixDestination.GetTotal());
        ML_STAR.seqMastermixSource.SetMax(ML_STAR.seqMastermixSource.GetTotal());
        ML_STAR.seqMastermixDestination.SetCurrentPosition(1);
        ML_STAR.seqMastermixSource.SetCurrentPosition(1);
      }
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS084_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS084_Destination, 1, ML_STAR.seqAJS084_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS084_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS084_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS084_Destination.SetMax(ML_STAR.seqAJS084_Destination.GetTotal());
      ML_STAR.seqAJS084_Source.SetMax(ML_STAR.seqAJS084_Source.GetTotal());
      ML_STAR.seqAJS084_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS084_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS085_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS085_Destination, 1, ML_STAR.seqAJS085_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS085_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS085_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS085_Destination.SetMax(ML_STAR.seqAJS085_Destination.GetTotal());
      ML_STAR.seqAJS085_Source.SetMax(ML_STAR.seqAJS085_Source.GetTotal());
      ML_STAR.seqAJS085_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS085_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS086_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS086_Destination, 1, ML_STAR.seqAJS086_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS086_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS086_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS086_Destination.SetMax(ML_STAR.seqAJS086_Destination.GetTotal());
      ML_STAR.seqAJS086_Source.SetMax(ML_STAR.seqAJS086_Source.GetTotal());
      ML_STAR.seqAJS086_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS086_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS087_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS087_Destination, 1, ML_STAR.seqAJS087_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS087_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS087_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS087_Destination.SetMax(ML_STAR.seqAJS087_Destination.GetTotal());
      ML_STAR.seqAJS087_Source.SetMax(ML_STAR.seqAJS087_Source.GetTotal());
      ML_STAR.seqAJS087_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS087_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS088_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS088_Destination, 1, ML_STAR.seqAJS088_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS088_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS088_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS088_Destination.SetMax(ML_STAR.seqAJS088_Destination.GetTotal());
      ML_STAR.seqAJS088_Source.SetMax(ML_STAR.seqAJS088_Source.GetTotal());
      ML_STAR.seqAJS088_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS088_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS089_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS089_Destination, 1, ML_STAR.seqAJS089_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS089_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS089_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS089_Destination.SetMax(ML_STAR.seqAJS089_Destination.GetTotal());
      ML_STAR.seqAJS089_Source.SetMax(ML_STAR.seqAJS089_Source.GetTotal());
      ML_STAR.seqAJS089_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS089_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS105_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS105_Destination, 1, ML_STAR.seqAJS105_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS105_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS105_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS105_Destination.SetMax(ML_STAR.seqAJS105_Destination.GetTotal());
      ML_STAR.seqAJS105_Source.SetMax(ML_STAR.seqAJS105_Source.GetTotal());
      ML_STAR.seqAJS105_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS105_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS106_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS106_Destination, 1, ML_STAR.seqAJS106_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS106_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS106_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS106_Destination.SetMax(ML_STAR.seqAJS106_Destination.GetTotal());
      ML_STAR.seqAJS106_Source.SetMax(ML_STAR.seqAJS106_Source.GetTotal());
      ML_STAR.seqAJS106_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS106_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS121_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS121_Destination, 1, ML_STAR.seqAJS121_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS121_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS121_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS121_Destination.SetMax(ML_STAR.seqAJS121_Destination.GetTotal());
      ML_STAR.seqAJS121_Source.SetMax(ML_STAR.seqAJS121_Source.GetTotal());
      ML_STAR.seqAJS121_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS121_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS124_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS124_Destination, 1, ML_STAR.seqAJS124_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS124_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS124_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS124_Destination.SetMax(ML_STAR.seqAJS124_Destination.GetTotal());
      ML_STAR.seqAJS124_Source.SetMax(ML_STAR.seqAJS124_Source.GetTotal());
      ML_STAR.seqAJS124_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS124_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS128_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS128_Destination, 1, ML_STAR.seqAJS128_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS128_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS128_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS128_Destination.SetMax(ML_STAR.seqAJS128_Destination.GetTotal());
      ML_STAR.seqAJS128_Source.SetMax(ML_STAR.seqAJS128_Source.GetTotal());
      ML_STAR.seqAJS128_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS128_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS129_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS129_Destination, 1, ML_STAR.seqAJS129_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS129_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS129_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS129_Destination.SetMax(ML_STAR.seqAJS129_Destination.GetTotal());
      ML_STAR.seqAJS129_Source.SetMax(ML_STAR.seqAJS129_Source.GetTotal());
      ML_STAR.seqAJS129_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS129_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS130_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS130_Destination, 1, ML_STAR.seqAJS130_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS130_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS130_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS130_Destination.SetMax(ML_STAR.seqAJS130_Destination.GetTotal());
      ML_STAR.seqAJS130_Source.SetMax(ML_STAR.seqAJS130_Source.GetTotal());
      ML_STAR.seqAJS130_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS130_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS134_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS134_Destination, 1, ML_STAR.seqAJS134_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS134_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS134_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS134_Destination.SetMax(ML_STAR.seqAJS134_Destination.GetTotal());
      ML_STAR.seqAJS134_Source.SetMax(ML_STAR.seqAJS134_Source.GetTotal());
      ML_STAR.seqAJS134_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS134_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS135_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS135_Destination, 1, ML_STAR.seqAJS135_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS135_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS135_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS135_Destination.SetMax(ML_STAR.seqAJS135_Destination.GetTotal());
      ML_STAR.seqAJS135_Source.SetMax(ML_STAR.seqAJS135_Source.GetTotal());
      ML_STAR.seqAJS135_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS135_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS136_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS136_Destination, 1, ML_STAR.seqAJS136_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS136_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS136_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS136_Destination.SetMax(ML_STAR.seqAJS136_Destination.GetTotal());
      ML_STAR.seqAJS136_Source.SetMax(ML_STAR.seqAJS136_Source.GetTotal());
      ML_STAR.seqAJS136_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS136_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS137_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS137_Destination, 1, ML_STAR.seqAJS137_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS137_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS137_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS137_Destination.SetMax(ML_STAR.seqAJS137_Destination.GetTotal());
      ML_STAR.seqAJS137_Source.SetMax(ML_STAR.seqAJS137_Source.GetTotal());
      ML_STAR.seqAJS137_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS137_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS142_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS142_Destination, 1, ML_STAR.seqAJS142_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS142_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS142_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS142_Destination.SetMax(ML_STAR.seqAJS142_Destination.GetTotal());
      ML_STAR.seqAJS142_Source.SetMax(ML_STAR.seqAJS142_Source.GetTotal());
      ML_STAR.seqAJS142_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS142_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS143_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS143_Destination, 1, ML_STAR.seqAJS143_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS143_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS143_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS143_Destination.SetMax(ML_STAR.seqAJS143_Destination.GetTotal());
      ML_STAR.seqAJS143_Source.SetMax(ML_STAR.seqAJS143_Source.GetTotal());
      ML_STAR.seqAJS143_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS143_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS155_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS155_Destination, 1, ML_STAR.seqAJS155_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS155_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS155_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS155_Destination.SetMax(ML_STAR.seqAJS155_Destination.GetTotal());
      ML_STAR.seqAJS155_Source.SetMax(ML_STAR.seqAJS155_Source.GetTotal());
      ML_STAR.seqAJS155_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS155_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS156_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS156_Destination, 1, ML_STAR.seqAJS156_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS156_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS156_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS156_Destination.SetMax(ML_STAR.seqAJS156_Destination.GetTotal());
      ML_STAR.seqAJS156_Source.SetMax(ML_STAR.seqAJS156_Source.GetTotal());
      ML_STAR.seqAJS156_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS156_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS157_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS157_Destination, 1, ML_STAR.seqAJS157_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS157_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS157_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS157_Destination.SetMax(ML_STAR.seqAJS157_Destination.GetTotal());
      ML_STAR.seqAJS157_Source.SetMax(ML_STAR.seqAJS157_Source.GetTotal());
      ML_STAR.seqAJS157_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS157_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS177_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS177_Destination, 1, ML_STAR.seqAJS177_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS177_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS177_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS177_Destination.SetMax(ML_STAR.seqAJS177_Destination.GetTotal());
      ML_STAR.seqAJS177_Source.SetMax(ML_STAR.seqAJS177_Source.GetTotal());
      ML_STAR.seqAJS177_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS177_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS178_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS178_Destination, 1, ML_STAR.seqAJS178_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS178_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS178_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS178_Destination.SetMax(ML_STAR.seqAJS178_Destination.GetTotal());
      ML_STAR.seqAJS178_Source.SetMax(ML_STAR.seqAJS178_Source.GetTotal());
      ML_STAR.seqAJS178_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS178_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS179_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS179_Destination, 1, ML_STAR.seqAJS179_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS179_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS179_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS179_Destination.SetMax(ML_STAR.seqAJS179_Destination.GetTotal());
      ML_STAR.seqAJS179_Source.SetMax(ML_STAR.seqAJS179_Source.GetTotal());
      ML_STAR.seqAJS179_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS179_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS180_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS180_Destination, 1, ML_STAR.seqAJS180_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS180_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS180_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS180_Destination.SetMax(ML_STAR.seqAJS180_Destination.GetTotal());
      ML_STAR.seqAJS180_Source.SetMax(ML_STAR.seqAJS180_Source.GetTotal());
      ML_STAR.seqAJS180_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS180_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS209_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS209_Destination, 1, ML_STAR.seqAJS209_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS209_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS209_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS209_Destination.SetMax(ML_STAR.seqAJS209_Destination.GetTotal());
      ML_STAR.seqAJS209_Source.SetMax(ML_STAR.seqAJS209_Source.GetTotal());
      ML_STAR.seqAJS209_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS209_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS250_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS250_Destination, 1, ML_STAR.seqAJS250_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS250_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS250_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS250_Destination.SetMax(ML_STAR.seqAJS250_Destination.GetTotal());
      ML_STAR.seqAJS250_Source.SetMax(ML_STAR.seqAJS250_Source.GetTotal());
      ML_STAR.seqAJS250_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS250_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqAJS251_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqAJS251_Destination, 1, ML_STAR.seqAJS251_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqAJS251_Destination.GetCurrentPosition() > 0 && ML_STAR.seqAJS251_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqAJS251_Destination.SetMax(ML_STAR.seqAJS251_Destination.GetTotal());
      ML_STAR.seqAJS251_Source.SetMax(ML_STAR.seqAJS251_Source.GetTotal());
      ML_STAR.seqAJS251_Destination.SetCurrentPosition(1);
      ML_STAR.seqAJS251_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqpTW080_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqpTW080_Destination, 1, ML_STAR.seqpTW080_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqpTW080_Destination.GetCurrentPosition() > 0 && ML_STAR.seqpTW080_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqpTW080_Destination.SetMax(ML_STAR.seqpTW080_Destination.GetTotal());
      ML_STAR.seqpTW080_Source.SetMax(ML_STAR.seqpTW080_Source.GetTotal());
      ML_STAR.seqpTW080_Destination.SetCurrentPosition(1);
      ML_STAR.seqpTW080_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqpTW096_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqpTW096_Destination, 1, ML_STAR.seqpTW096_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqpTW096_Destination.GetCurrentPosition() > 0 && ML_STAR.seqpTW096_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqpTW096_Destination.SetMax(ML_STAR.seqpTW096_Destination.GetTotal());
      ML_STAR.seqpTW096_Source.SetMax(ML_STAR.seqpTW096_Source.GetTotal());
      ML_STAR.seqpTW096_Destination.SetCurrentPosition(1);
      ML_STAR.seqpTW096_Source.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqpTW324_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTipWithFilter, 1, ML_STAR.seqpTW324_Destination, 1, ML_STAR.seqpTW324_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqpTW324_Destination.GetCurrentPosition() > 0 && ML_STAR.seqpTW324_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTipWithFilter.SetMax(ML_STAR.MlStar10ulLowVolumeTipWithFilter.GetTotal());
      ML_STAR.seqpTW324_Destination.SetMax(ML_STAR.seqpTW324_Destination.GetTotal());
      ML_STAR.seqpTW324_Source.SetMax(ML_STAR.seqpTW324_Source.GetTotal());
      ML_STAR.seqpTW324_Destination.SetCurrentPosition(1);
      ML_STAR.seqpTW324_Source.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("10uLTips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, Translate("50uLTips"), ML_STAR);
  } }
