 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler STAR\\HamiltonHeaterCoolerStar.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
#include "LNP Formulations.res"
variable intEndSeq;
global device ML_STAR ("LNP Formulations.lay", "ML_STAR", hslTrue);
variable loopCounter1;
variable intConstructs;
variable loopCounter2;
variable intColumnsTotal;
variable intRNAColumn;
variable loopCounter3;
variable floPlateNumber;
sequence arDestinationSeq[];
variable intPlateNumber;
variable floLipid1Volume;
variable floLipid2Volume;
variable floLipid3Volume;
variable floLipid4Volume;
variable floLipid5Volume;
variable intLipidNumber;
sequence arRNASeq[];
sequence arLipidseq[];
variable intColumnNumber;
variable floLipid6Volume;
variable arLipidVolume[];
variable floEthanolVolume;
variable str96HeadRemainder;
variable intPlateNumberDown;
variable intRemainder;
variable floRemainder;
variable intReverseRemainder;
dialog dialogHandle_1;
variable loopCounter7;
sequence arTipRemainderSeq[];
variable intRemainderColumn;
variable loopCounter4;
variable loopCounter5;
dialog dialogHandle_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    TipCount::Read2(ML_STAR.seq300Tips, Translate("tips300uL"), ML_STAR);
    TipCount::Edit2(ML_STAR.seq300Tips, Translate("tips300uL"), ML_STAR, 999);
    str96HeadRemainder = Translate("");
    dialogHandle_2.SetInputSize(10);
    dialogHandle_2.SetInputField(0, Translate("How many different mRNAs?"), hslInteger, 1, 1, 12);
    dialogHandle_2.SetInputField(1, Translate("How many columns per mRNA?"), hslInteger, 1, 1, 36);
    dialogHandle_2.SetInputField(2, Translate("How many lipids in the mix?"), hslInteger, 3, 3, 6);
    dialogHandle_2.SetInputField(3, Translate("Volume of Lipid 1 (uL)?"), hslFloat, 50, 30, 300);
    dialogHandle_2.SetInputField(4, Translate("Volume of Lipid 2 (uL)?"), hslFloat, 50, 30, 300);
    dialogHandle_2.SetInputField(5, Translate("Volume of Lipid 3 (uL)?"), hslFloat, 50, 30, 300);
    dialogHandle_2.SetInputField(6, Translate("Volume of Lipid 4 (uL)?"), hslFloat, 50, 30, 300);
    dialogHandle_2.SetInputField(7, Translate("Volume of Lipid 5 (uL)?"), hslFloat, 50, 30, 300);
    dialogHandle_2.SetInputField(8, Translate("Volume of Lipid 6 (uL)?"), hslFloat, 50, 30, 300);
    dialogHandle_2.SetInputField(9, Translate("Volume of Ethanol (uL)"), hslFloat, 150, 100, 1000);
    dialogHandle_2.ShowInput(Translate("start position"), hslInfinite, hslOKOnly | hslDefButton1);
    intConstructs = dialogHandle_2.GetInputField(0);
    intColumnNumber = dialogHandle_2.GetInputField(1);
    intLipidNumber = dialogHandle_2.GetInputField(2);
    floLipid1Volume = dialogHandle_2.GetInputField(3);
    floLipid2Volume = dialogHandle_2.GetInputField(4);
    floLipid3Volume = dialogHandle_2.GetInputField(5);
    floLipid4Volume = dialogHandle_2.GetInputField(6);
    floLipid5Volume = dialogHandle_2.GetInputField(7);
    floLipid6Volume = dialogHandle_2.GetInputField(8);
    floEthanolVolume = dialogHandle_2.GetInputField(9);
    arDestinationSeq.SetSize(0);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination1);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination2);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination3);
    arRNASeq.SetSize(0);
    arRNASeq.AddAsLast(ML_STAR.seqRNA1);
    arRNASeq.AddAsLast(ML_STAR.seqRNA2);
    arRNASeq.AddAsLast(ML_STAR.seqRNA3);
    arRNASeq.AddAsLast(ML_STAR.seqRNA4);
    arRNASeq.AddAsLast(ML_STAR.seqRNA5);
    arRNASeq.AddAsLast(ML_STAR.seqRNA6);
    arRNASeq.AddAsLast(ML_STAR.seqRNA7);
    arRNASeq.AddAsLast(ML_STAR.seqRNA8);
    arRNASeq.AddAsLast(ML_STAR.seqRNA9);
    arRNASeq.AddAsLast(ML_STAR.seqRNA10);
    arRNASeq.AddAsLast(ML_STAR.seqRNA11);
    arRNASeq.AddAsLast(ML_STAR.seqRNA12);
    arLipidseq.SetSize(0);
    arLipidseq.AddAsLast(ML_STAR.seqLipid1);
    arLipidseq.AddAsLast(ML_STAR.seqLipid2);
    arLipidseq.AddAsLast(ML_STAR.seqLipid3);
    arLipidseq.AddAsLast(ML_STAR.seqLipid4);
    arLipidseq.AddAsLast(ML_STAR.seqLipid5);
    arLipidseq.AddAsLast(ML_STAR.seqLipid6);
    arTipRemainderSeq.SetSize(0);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder1);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder2);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder3);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder4);
    arLipidVolume.SetSize(0);
    arLipidVolume.AddAsLast(floLipid1Volume);
    arLipidVolume.AddAsLast(floLipid2Volume);
    arLipidVolume.AddAsLast(floLipid3Volume);
    arLipidVolume.AddAsLast(floLipid4Volume);
    arLipidVolume.AddAsLast(floLipid5Volume);
    arLipidVolume.AddAsLast(floLipid6Volume);
    intRNAColumn = 1;
    intColumnsTotal = intConstructs * intColumnNumber;
    intEndSeq = intColumnsTotal * 8;
    floPlateNumber = intEndSeq / (96 * 1.0);
    intPlateNumber = MthCeiling(floPlateNumber);
    intPlateNumberDown = MthFloor(floPlateNumber);
    floRemainder = floPlateNumber - intPlateNumberDown;
    intRemainderColumn = floRemainder * 12;
    intRemainder = floRemainder * 96;
    intReverseRemainder = 95 - intRemainder;
    ML_STAR.seqDestination.SetCount(intEndSeq);
    {
      for(loopCounter7 = 0; loopCounter7 < 96;)
      {
        loopCounter7 = loopCounter7 + 1;
        if (loopCounter7 <= intRemainder)
        {
          str96HeadRemainder = str96HeadRemainder + Translate("1");
        }
        else
        {
          str96HeadRemainder = str96HeadRemainder + Translate("0");
        }
      }
    }
    {
      for(loopCounter4 = 0; loopCounter4 < 4;)
      {
        loopCounter4 = loopCounter4 + 1;
        {
          for(loopCounter5 = 0; loopCounter5 < intRemainderColumn;)
          {
            loopCounter5 = loopCounter5 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
      }
    }
    ML_STAR.seq1000TipsRemainder1.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder2.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder3.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder4.SetCurrentPosition(1);
    dialogHandle_1.SetOutput(str96HeadRemainder);
    dialogHandle_1.ShowOutput(Translate("String Modification"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      for(loopCounter1 = 0; loopCounter1 < intConstructs;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          for(loopCounter2 = 0; loopCounter2 < intColumnNumber;)
          {
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
      }
    }
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    {
      for(loopCounter1 = 0; loopCounter1 < intLipidNumber;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          for(loopCounter2 = 0; loopCounter2 < intColumnsTotal;)
          {
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
        ML_STAR.seqLipid_Mix.SetCurrentPosition(1);
      }
    }
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR.seqDestination.SetCurrentPosition(1);
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR.seqDestination.SetCurrentPosition(1);
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TipCount::Write2(ML_STAR.seq300Tips, Translate("tips300uL"), ML_STAR);
  } }
