 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler STAR\\HamiltonHeaterCoolerStar.hsl" }
#include "LNP Formulations.res"
variable intStartColumn;
variable intStartSeq;
variable intEndSeq;
variable intDestColSeq;
global device ML_STAR ("LNP Formulations.lay", "ML_STAR", hslTrue);
dialog dialogHandle_1;
variable inColumnNumber;
variable loopCounter1;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tips1000uL"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tips300uL"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("tips50uL"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tips1000uL"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tips300uL"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tips50uL", ML_STAR, 999);
    intDestColSeq = 1;
    intStartSeq = 1;
    dialogHandle_1.SetInputSize(2);
    dialogHandle_1.SetInputField(0, Translate("what column should this start at"), hslInteger, 1);
    dialogHandle_1.SetInputField(1, Translate("How many columns?"), hslInteger, 1);
    dialogHandle_1.ShowInput(Translate("start position"), hslInfinite, hslOKOnly | hslDefButton1);
    intStartColumn = dialogHandle_1.GetInputField(0);
    inColumnNumber = dialogHandle_1.GetInputField(1);
    intStartSeq = intStartColumn * 8;
    intStartSeq = intStartSeq - 7;
    intEndSeq = inColumnNumber * 8;
    intEndSeq = intEndSeq + intStartSeq;
    intEndSeq = intEndSeq - 1;
    dialogHandle1.SetOutput(intStartSeq, "\n", intEndSeq);
    dialogHandle1.ShowOutput(Translate("test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR.seqDWP.SetCurrentPosition(intStartSeq);
    ML_STAR.seqDWP.SetCount(intEndSeq);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.seqDWP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqDWP, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqDWP.GetCurrentPosition() > 0 && ML_STAR.seqDWP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqDWP.SetMax(ML_STAR.seqDWP.GetTotal());
      ML_STAR.seqDWP.SetCurrentPosition(1);
    }
    if(0){
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tips1000uL"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tips300uL"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, Translate("tips50uL"), ML_STAR);
  } }
