global device ML_STAR ("Microspotting Layout.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Microspotting Layout.res"
dialog dialogHandle1;
variable int_Samples;
variable loopCounter2;
variable loopCounter1;
sequence arPlateSequences[];
variable intHeight;
variable loopCounter3;
sequence arCarbPlateSequences[];
variable intPlusOne;
dialog dialogHandle2;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    dialogHandle_1.SetInputSize(1);
    dialogHandle_1.SetInputField(0, Translate("How many assembly reactions?"), hslInteger, 96, 1, 96);
    dialogHandle_1.ShowInput(Translate("User Input"), hslInfinite, hslOKOnly | hslDefButton1);
    int_Samples = dialogHandle_1.GetInputField(0);
    intHeight = 0.5;
    TipCount::Read2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("10_uL"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("10_uL"), ML_STAR, 99);
    TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("50_uL"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, Translate("50_uL"), ML_STAR, 99);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    dialogHandle2.SetOutput(Translate("Swap out the first Agar Plate"));
    dialogHandle2.ShowOutput(Translate("Pause"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR.Assembly_Reactions.SetCount(int_Samples);
    arPlateSequences.SetSize(0);
    arPlateSequences.AddAsLast(ML_STAR.seqPlate_Dilution1);
    arPlateSequences.AddAsLast(ML_STAR.seqPlate_Dilution2);
    arPlateSequences.AddAsLast(ML_STAR.seqPlate_Dilution3);
    arPlateSequences.AddAsLast(ML_STAR.seqPlate_Dilution4);
    arPlateSequences.AddAsLast(ML_STAR.seqPlate_Dilution5);
    arCarbPlateSequences.SetSize(0);
    arCarbPlateSequences.AddAsLast(ML_STAR.seqPlateCarb1);
    arCarbPlateSequences.AddAsLast(ML_STAR.seqPlateCarb2);
    arCarbPlateSequences.AddAsLast(ML_STAR.seqPlateCarb3);
    arCarbPlateSequences.AddAsLast(ML_STAR.seqPlateCarb4);
    arCarbPlateSequences.AddAsLast(ML_STAR.seqPlateCarb5);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      for(loopCounter1 = 0; loopCounter1 < 1;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    {
      for(loopCounter3 = 0; loopCounter3 < 4;)
      {
        loopCounter3 = loopCounter3 + 1;
        intPlusOne = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < 5;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("10_uL"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, Translate("10_uL"), ML_STAR);
  } }
