global device ML_STAR ("ResidualPlasmid.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLArrLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
#include "ResidualPlasmid.res"
dialog dialogHandle_1;
variable enz_vol;
variable primers_vol;
variable mm_vol;
variable water_vol;
variable rxn_mix_vol;
variable num_wells;
variable rxn_mix_well_vol;
variable num_wells_noreps;
variable loopCounter1;
variable intMix_vol;
variable intReplicates;
variable intSamples;
variable intDilutions;
variable samp_tips;
variable samps_counter;
variable loopCounter2;
variable intSampVol;
variable loopCounter3;
variable dil_tips;
variable loopCounter4;
variable dil_tip_num;
variable loopCounter7;
variable d_count;
variable s_count;
variable stamp_tips;
variable loopCounter5;
variable loopCounter6;
sequence mix_cols[];
variable loopCounter8;
variable loopCounter9;
variable mix_col_tips;
variable mix_loop_count;
variable current_mix_col;
variable conditions;
variable new_inputs;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable loopCounter10;
variable dil_tips2;
sequence dil_rows[];
variable loopCounter11;
variable d1_count;
variable arr_rows;
dialog dialogHandle_4;
variable intRepVol;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300_tips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("low_tips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("high_tips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("50_tips"), ML_STAR);
    TipCount::Read2(ML_STAR.tips_50, Translate("tips_50"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300_tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("low_tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("high_tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, Translate("50_tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.tips_50, Translate("tips_50"), ML_STAR, 999);
    water_vol = 0;
    mm_vol = 0;
    primers_vol = 0;
    enz_vol = 0;
    rxn_mix_vol = 0;
    num_wells = 0;
    num_wells_noreps = 0;
    dialogHandle_4.SetInputSize(3);
    dialogHandle_4.SetInputField(0, Translate("Input # of samples:"), hslInteger, 3, 1, 6);
    dialogHandle_4.SetInputField(1, Translate("Input # of dilutions:"), hslInteger, 4, 2, 8);
    dialogHandle_4.SetInputField(2, Translate("Input # of replicates:"), hslInteger, 2, 2, 3);
    dialogHandle_4.ShowInput(Translate("Inputs"), hslInfinite, hslOKOnly | hslDefButton1);
    intSamples = dialogHandle_4.GetInputField(0);
    intDilutions = dialogHandle_4.GetInputField(1);
    intReplicates = dialogHandle_4.GetInputField(2);
    conditions = intReplicates * intSamples;
    if (conditions > 12)
    {
      dialogHandle_2.SetOutput(Translate("Number of Samples and Replicates exceeds maximum values. # Samples * # Replicates must be 12 or less."));
      new_inputs = dialogHandle_2.ShowOutput(Translate("Exceed's Available Wells"), hslAbortRetryIgnore | hslInformation | hslDefButton2, hslInfinite);
      if (new_inputs == 4)
      {
        dialogHandle_3.SetInputSize(3);
        dialogHandle_3.SetInputField(0, Translate("Input # of samples:"), hslInteger, 3, 1, 6);
        dialogHandle_3.SetInputField(1, Translate("Input # of dilutions:"), hslInteger, 4, 2, 8);
        dialogHandle_3.SetInputField(2, Translate("Input # of replicates:"), hslInteger, 2, 1, 3);
        dialogHandle_3.ShowInput(Translate("Inputs"), hslInfinite, hslOKOnly | hslDefButton1);
        intSamples = dialogHandle_3.GetInputField(0);
        intDilutions = dialogHandle_3.GetInputField(1);
        intReplicates = dialogHandle_3.GetInputField(2);
      }
    }
    num_wells_noreps = intSamples * intDilutions;
    num_wells = num_wells_noreps * intReplicates;
    water_vol = num_wells * 8.4;
    mm_vol = num_wells * 9;
    primers_vol = num_wells * 3.6;
    enz_vol = num_wells * 3;
    rxn_mix_vol = num_wells * 24;
    intMix_vol = rxn_mix_vol * 0.75;
    new_inputs = 0;
    rxn_mix_well_vol = rxn_mix_vol / intDilutions;
    if (rxn_mix_well_vol > 200)
    {
      rxn_mix_well_vol = 200;
    }
    intSampVol = intReplicates * 60;
    intSampVol = intSampVol + 30;
    intRepVol = intSampVol / (intReplicates * 1.0);
    if(0){
      samp_tips = Translate("");
      samps_counter = intSamples;
      {
        for(loopCounter2 = 0; loopCounter2 < 8;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (samps_counter > 0)
          {
            samp_tips = samp_tips + Translate("1");
          }
          else
          {
            samp_tips = samp_tips + Translate("0");
          }
          samps_counter = samps_counter - 1;
        }
      }
      TrcTrace(samp_tips, samps_counter);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      dialogHandle_1.SetOutput(Translate("Insert enzyme tube to position 1 of eppendorf sample carrier"));
      dialogHandle_1.ShowOutput(Translate("Insert Enzyme"), hslOKOnly | hslInformation | hslDefButton1, 999);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        for(loopCounter3 = 0; loopCounter3 < intReplicates;)
        {
          loopCounter3 = loopCounter3 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      dil_tip_num = intSamples * intReplicates;
      dil_tips = Translate("");
      dil_tips2 = Translate("");
      {
        for(loopCounter4 = 0; loopCounter4 < 8;)
        {
          loopCounter4 = loopCounter4 + 1;
          if (dil_tip_num > 0)
          {
            dil_tips = dil_tips + Translate("1");
          }
          else
          {
            dil_tips = dil_tips + Translate("0");
          }
          dil_tip_num = dil_tip_num - 1;
        }
      }
      if (dil_tip_num > 0)
      {
        {
          for(loopCounter10 = 0; loopCounter10 < 8;)
          {
            loopCounter10 = loopCounter10 + 1;
            if (dil_tip_num > 0)
            {
              dil_tips2 = dil_tips2 + Translate("1");
            }
            else
            {
              dil_tips2 = dil_tips2 + Translate("0");
            }
            dil_tip_num = dil_tip_num - 1;
          }
        }
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (intDilutions > 8)
      {
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      dil_rows.SetSize(0);
      dil_rows.AddAsLast(ML_STAR.dils_first);
      dil_rows.AddAsLast(ML_STAR.dils_second);
      dil_rows.AddAsLast(ML_STAR.dils_third);
      dil_rows.AddAsLast(ML_STAR.dils_fourth);
      dil_rows.AddAsLast(ML_STAR.dils_fifth);
      dil_rows.AddAsLast(ML_STAR.dils_sixth);
      dil_rows.AddAsLast(ML_STAR.dils_seventh);
      d_count = 1;
      d1_count = 2;
      arr_rows = intDilutions - 2;
      {
        for(loopCounter11 = 0; loopCounter11 < arr_rows;)
        {
          loopCounter11 = loopCounter11 + 1;
          SeqResetSequenceIndexes(dil_rows.ElementAt( d_count -1));
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (intDilutions > 8)
          {
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
          d_count = d_count + 1;
          d1_count = d1_count + 1;
        }
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        for(loopCounter1 = 0; loopCounter1 < intDilutions;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      SeqResetSequenceIndexes(ML_STAR.rxn_mix_wells);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    stamp_tips = Translate("");
    s_count = intSamples * intReplicates;
    d_count = intDilutions;
    TrcTrace4(Translate("   s_count: "), s_count, Translate("   d_count: "), d_count);
    {
      for(loopCounter5 = 0; loopCounter5 < 12;)
      {
        loopCounter5 = loopCounter5 + 1;
        TrcTrace4(Translate("   stamp_tips: "), stamp_tips, Translate("   s_count: "), s_count);
        if (s_count > 0)
        {
          {
            for(loopCounter6 = 0; loopCounter6 < 8;)
            {
              loopCounter6 = loopCounter6 + 1;
              if (d_count > 0)
              {
                stamp_tips = stamp_tips + Translate("1");
              }
              else
              {
                stamp_tips = stamp_tips + Translate("0");
              }
              d_count = d_count - 1;
            }
          }
          d_count = intDilutions;
        }
        else
        {
          {
            for(loopCounter7 = 0; loopCounter7 < 8;)
            {
              loopCounter7 = loopCounter7 + 1;
              stamp_tips = stamp_tips + Translate("0");
            }
          }
        }
        s_count = s_count - 1;
      }
    }
    TrcTrace8(Translate("   stamp_tips: "), stamp_tips, Translate("   s_count: "), s_count, Translate("   d_count: "), d_count, Translate("   2nd loop counter: "), loopCounter7);
    if(0){
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    s_count = intReplicates * intSamples;
    mix_cols.SetSize(0);
    mix_cols.AddAsLast(ML_STAR.mix_col1);
    mix_cols.AddAsLast(ML_STAR.mix_col2);
    mix_cols.AddAsLast(ML_STAR.mix_col3);
    mix_cols.AddAsLast(ML_STAR.mix_col4);
    mix_cols.AddAsLast(ML_STAR.mix_col5);
    mix_cols.AddAsLast(ML_STAR.mix_col6);
    mix_cols.AddAsLast(ML_STAR.mix_col7);
    mix_cols.AddAsLast(ML_STAR.mix_col8);
    mix_cols.AddAsLast(ML_STAR.mix_col9);
    mix_cols.AddAsLast(ML_STAR.mix_col10);
    mix_cols.AddAsLast(ML_STAR.mix_col11);
    mix_cols.AddAsLast(ML_STAR.mix_col12);
    mix_col_tips = Translate("");
    dil_tip_num = intDilutions;
    {
      for(loopCounter9 = 0; loopCounter9 < 8;)
      {
        loopCounter9 = loopCounter9 + 1;
        if (dil_tip_num > 0)
        {
          mix_col_tips = mix_col_tips + Translate("1");
        }
        else
        {
          mix_col_tips = mix_col_tips + Translate("0");
        }
        dil_tip_num = dil_tip_num - 1;
      }
    }
    mix_loop_count = 1;
    current_mix_col = 0;
    {
      for(loopCounter8 = 0; loopCounter8 < s_count;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.rxn_mix_wells.SetCurrentPosition(1);
        mix_loop_count = loopCounter8;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    SeqResetSequenceIndexes(ML_STAR.mix_wells_seq);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300_tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("low_tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("high_tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, Translate("50_tips"), ML_STAR);
    TipCount::Write2(ML_STAR.tips_50, Translate("tips_50"), ML_STAR);
  } }
