global device ML_STAR ("Ribogreen.lay", "ML_STAR", hslTrue);
#include "Ribogreen.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000uLTips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300uLTips"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000uLTips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300uLTips"), ML_STAR, 999);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR.DWP.SetCurrentPosition(1);
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR.DWP.SetCurrentPosition(9);
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      for(loopCounter1 = 0; loopCounter1 < 6;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR.DWP.SetCurrentPosition(loopCounter1);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR.DWP.SetCurrentPosition(9);
    {
      for(loopCounter1 = 0; loopCounter1 < 6;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR.DWP.SetCurrentPosition(1);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR.DWP.SetCurrentPosition(9);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000uLTips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300uLTips"), ML_STAR);
  } }
