 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "~ReCAF2.res"
variable int_Samples;
variable loopCounterPipette;
variable loopCounterFileRead;
variable int_Counter;
variable ar_WaterVolume[];
variable ar_DNAVolume[];
variable fileConcentrations_Tris_pH_8;
variable int_Height;
variable float_T7;
variable float_Spermidine;
variable float_IPP;
variable float_RNAseInhibitor;
variable fileConcentrations_CleanCap;
variable fileConcentrations_Water;
variable fileConcentrations_MgCl2;
variable fileConcentrations_DNA;
variable fileConcentrations_NTP;
variable float_DTT;
variable fileConcentrations_Tris_pH_7;
file fileDOE;
variable ar_CleanCapVolume[];
variable ar_Tris8Volume[];
variable ar_Tris7Volume[];
variable ar_MgCl2Volume[];
variable ar_NTPVolume[];
dialog dialogHandle_1;
dialog dialogHandle2;
dialog dialogHandle_2;
dialog dialogHandle3;
global device ML_STAR ("IVT DOE Method Aidan.lay", "ML_STAR", hslTrue);
dialog dialogHandle1;
variable float_DNA;
variable float_NTP;
variable float_Mg;
variable float_DNAConc;
variable float_Buffer;
variable fileConcentrations_IPP;
variable ar_DTTVolume[];
variable ar_IPPVolume[];
variable fileConcentrations_DTT;
variable fileConcentrations_Tris_C;
variable fileConcentrations_MgOa;
variable fileConcentrations_Hepes;
variable ar_MgOaVolume[];
variable ar_HepesVolume[];
variable ar_TrisCitrateVolume[];
dialog dialogHandle_3;
variable fileConcentrations_644NTP;
variable fileConcentrations_126NTP;
variable ar_126NTPVolume[];
variable ar_644NTPVolume[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    dialogHandle_3.SetInputSize(1);
    dialogHandle_3.SetInputField(0, Translate("How many DOE"), hslInteger, 54, 1, 58);
    dialogHandle_3.ShowInput(Translate("Sample Number"), hslInfinite, hslOKOnly | hslDefButton1);
    int_Samples = dialogHandle_3.GetInputField(0);
    TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR, 999);
    TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300uL_Tips"), ML_STAR);
    TipCount::Read2(ML_STAR.MlStar50ulTip, Translate("50uL_Tips"), ML_STAR);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300uL_Tips"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar50ulTip, Translate("50uL_Tips"), ML_STAR, 999);
    if(0){
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    float_Spermidine = 2;
    float_NTP = 80;
    float_DNA = 0;
    float_Mg = 11;
    float_Buffer = 8;
    float_RNAseInhibitor = 5;
    float_T7 = 28;
    int_Height = 8.5;
    float_DNA = 10 / (float_DNAConc * 1.0);
    ar_WaterVolume.SetSize(int_Samples);
    ar_Tris7Volume.SetSize(int_Samples);
    ar_TrisCitrateVolume.SetSize(int_Samples);
    ar_HepesVolume.SetSize(int_Samples);
    ar_MgCl2Volume.SetSize(int_Samples);
    ar_MgOaVolume.SetSize(int_Samples);
    ar_CleanCapVolume.SetSize(int_Samples);
    ar_IPPVolume.SetSize(int_Samples);
    ar_DTTVolume.SetSize(int_Samples);
    ar_NTPVolume.SetSize(int_Samples);
    ar_644NTPVolume.SetSize(int_Samples);
    ar_126NTPVolume.SetSize(int_Samples);
    fileDOE.AddField("Water", fileConcentrations_Water, hslFloat);
    fileDOE.AddField("IPP", fileConcentrations_IPP, hslFloat);
    fileDOE.AddField("CleanCap", fileConcentrations_CleanCap, hslFloat);
    fileDOE.AddField("DTT", fileConcentrations_DTT, hslFloat);
    fileDOE.AddField("Tris7", fileConcentrations_Tris_pH_7, hslFloat);
    fileDOE.AddField("TrisC", fileConcentrations_Tris_C, hslFloat);
    fileDOE.AddField("Hepes", fileConcentrations_Hepes, hslFloat);
    fileDOE.AddField("MgCl2", fileConcentrations_MgCl2, hslFloat);
    fileDOE.AddField("MgOa", fileConcentrations_MgOa, hslFloat);
    fileDOE.AddField("NTP", fileConcentrations_NTP, hslFloat);
    fileDOE.AddField("644NTP", fileConcentrations_644NTP, hslFloat);
    fileDOE.AddField("126NTP", fileConcentrations_126NTP, hslFloat);
    if( 0 == fileDOE.Open("C:\\Users\\Hamilton\\OneDrive\\OneDrive - Strand Therapeutics\\Documents\\mRNA Process\\Automation Work\\Hamilton\\IVT DOE Volumes Aidan.xls" + " " + "Reaction_Setup$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\Hamilton\\OneDrive\\OneDrive - Strand Therapeutics\\Documents\\mRNA Process\\Automation Work\\Hamilton\\IVT DOE Volumes Aidan.xls", "HxMetEdCompCmd");
    }
    {
      for(loopCounterFileRead = 0; loopCounterFileRead < int_Samples;)
      {
        loopCounterFileRead = loopCounterFileRead + 1;
        if( 0 == fileDOE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ar_WaterVolume.SetAt(loopCounterFileRead-1, fileConcentrations_Water);
        ar_Tris7Volume.SetAt(loopCounterFileRead-1, fileConcentrations_Tris_pH_7);
        ar_TrisCitrateVolume.SetAt(loopCounterFileRead-1, fileConcentrations_Tris_C);
        ar_HepesVolume.SetAt(loopCounterFileRead-1, fileConcentrations_Hepes);
        ar_MgCl2Volume.SetAt(loopCounterFileRead-1, fileConcentrations_MgCl2);
        ar_MgOaVolume.SetAt(loopCounterFileRead-1, fileConcentrations_MgOa);
        ar_CleanCapVolume.SetAt(loopCounterFileRead-1, fileConcentrations_CleanCap);
        ar_IPPVolume.SetAt(loopCounterFileRead-1, fileConcentrations_IPP);
        ar_DTTVolume.SetAt(loopCounterFileRead-1, fileConcentrations_DTT);
        ar_NTPVolume.SetAt(loopCounterFileRead-1, fileConcentrations_NTP);
        ar_644NTPVolume.SetAt(loopCounterFileRead-1, fileConcentrations_644NTP);
        ar_126NTPVolume.SetAt(loopCounterFileRead-1, fileConcentrations_126NTP);
      }
    }
    if( 0 != fileDOE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileDOE.RemoveFields();
    ML_STAR.PCR_Destination.SetCount(int_Samples);
    MECC::TraceComment(Translate("Aliquot Water"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqWater, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqWater.SetMax(ML_STAR.seqWater.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqWater.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot Tris pH 7"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqTris7, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqTris7.SetMax(ML_STAR.seqTris7.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqTris7.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot Tris Citrate"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqTrisC, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqTrisC.SetMax(ML_STAR.seqTrisC.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqTrisC.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot Hepes"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqHepes, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqHepes.SetMax(ML_STAR.seqHepes.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqHepes.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot MgCl2"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqMgCl2, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqMgCl2.SetMax(ML_STAR.seqMgCl2.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqMgCl2.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot MgCl2"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqMgOa, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqMgOa.SetMax(ML_STAR.seqMgOa.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqMgOa.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot Spermidine"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqSpermidine, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqSpermidine.SetMax(ML_STAR.seqSpermidine.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqSpermidine.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot NTPs"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqEvenNTPs, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTip.SetMax(ML_STAR.MlStar300ulStandardVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqEvenNTPs.SetMax(ML_STAR.seqEvenNTPs.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqEvenNTPs.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot NTPs"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seq644NTPs, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTip.SetMax(ML_STAR.MlStar300ulStandardVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seq644NTPs.SetMax(ML_STAR.seq644NTPs.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seq644NTPs.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot NTPs"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seq126NTPs, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTip.SetMax(ML_STAR.MlStar300ulStandardVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seq126NTPs.SetMax(ML_STAR.seq126NTPs.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seq126NTPs.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot DNA"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.seq644Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.seq644DNA, 1, ML_STAR.seq644Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.seq644Destination.GetCurrentPosition() > 0 && ML_STAR.seq644Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.seq644DNA.SetMax(ML_STAR.seq644DNA.GetTotal());
      ML_STAR.seq644Destination.SetMax(ML_STAR.seq644Destination.GetTotal());
      ML_STAR.seq644DNA.SetCurrentPosition(1);
      ML_STAR.seq644Destination.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot DNA"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.seq126Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.seq126DNA, 1, ML_STAR.seq126Destination, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.seq126Destination.GetCurrentPosition() > 0 && ML_STAR.seq126Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.seq126DNA.SetMax(ML_STAR.seq126DNA.GetTotal());
      ML_STAR.seq126Destination.SetMax(ML_STAR.seq126Destination.GetTotal());
      ML_STAR.seq126DNA.SetCurrentPosition(1);
      ML_STAR.seq126Destination.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot DTT"));
    if(0){
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    dialogHandle2.SetOutput(Translate("Please open the DTT Tube"));
    dialogHandle2.ShowOutput(Translate("Open DTT"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if(0){
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqDTT, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqDTT.SetMax(ML_STAR.seqDTT.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqDTT.SetCurrentPosition(1);
    }
    if(0){
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    dialogHandle_1.SetOutput(Translate("Please close the DTT Tube"));
    dialogHandle_1.ShowOutput(Translate("Open DTT"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if(0){
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    MECC::TraceComment(Translate("Aliquot CleanCap"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqCap, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqCap.SetMax(ML_STAR.seqCap.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqCap.SetCurrentPosition(1);
    }
    dialogHandle3.SetOutput(Translate("Load Frozen Reagents"));
    dialogHandle3.ShowOutput(Translate("Load Frozen Reagents"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if(0){
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    MECC::TraceComment(Translate("Aliquot RNAse Inhibitor"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqRNaseI, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqRNaseI.SetMax(ML_STAR.seqRNaseI.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqRNaseI.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot IPP"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar10ulLowVolumeTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqIPP, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar10ulLowVolumeTip.SetMax(ML_STAR.MlStar10ulLowVolumeTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqIPP.SetMax(ML_STAR.seqIPP.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqIPP.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot T7"));
    int_Counter = 1;
    {
      loopCounterPipette = 0;
      while (
         (ML_STAR.PCR_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTip, 1, ML_STAR.PCR_Destination, 1, ML_STAR.seqT7, 1);
        loopCounterPipette = loopCounterPipette + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_Counter = int_Counter + 8;
        if (
           (ML_STAR.PCR_Destination.GetCurrentPosition() > 0 && ML_STAR.PCR_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTip.SetMax(ML_STAR.MlStar50ulTip.GetTotal());
      ML_STAR.PCR_Destination.SetMax(ML_STAR.PCR_Destination.GetTotal());
      ML_STAR.seqT7.SetMax(ML_STAR.seqT7.GetTotal());
      ML_STAR.PCR_Destination.SetCurrentPosition(1);
      ML_STAR.seqT7.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000uL_Tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTip, Translate("10uL_Tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300uL_Tips"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar50ulTip, Translate("50uL_Tips"), ML_STAR);
  } }
