 namespace _Method { #include "HSLMthLib.hsl" }
#include "~Re2B26.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler STAR\\HamiltonHeaterCoolerStar.hsl" }
variable intEndSeq;
variable loopCounter1;
variable intConstructs;
variable loopCounter2;
variable intColumnsTotal;
variable intRNAColumn;
variable loopCounter3;
variable floPlateNumber;
sequence arDestinationSeq[];
variable intPlateNumber;
variable floLipid1Volume;
variable floLipid2Volume;
variable floLipid3Volume;
variable floLipid4Volume;
variable floLipid5Volume;
variable intLipidNumber;
sequence arRNASeq[];
sequence arLipidseq[];
variable intColumnNumber;
variable floLipid6Volume;
variable arLipidVolume[];
variable floEthanolVolume;
variable str96HeadRemainder;
variable intPlateNumberDown;
variable intRemainder;
variable floRemainder;
variable intReverseRemainder;
dialog dialogHandle_1;
variable loopCounter7;
sequence arTipRemainderSeq[];
variable intRemainderColumn;
variable loopCounter4;
variable loopCounter5;
dialog dialogHandle_2;
global device ML_STAR ("LNP Formulation Phase 3.lay", "ML_STAR", hslTrue);
dialog dialogHandle1;
dialog dialogHandle_3;
variable str8Channel;
variable loopCounter6;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
variable file1_Lipid_3;
variable loopCounter8;
variable file1_Lipid_4;
variable file1_Ethanol;
variable file1_Lipid_5;
variable file1_Lipid_6;
variable intLipidMixes;
variable file1_Lipid_1;
variable file1_Lipid_2;
file file1;
variable arTest[];
dialog dialogHandle_8;
dialog dialogHandle_9;
variable loopCounter9;
variable test;
variable strFile;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog customDialog_12;
variable seqDestination[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    str8Channel = Translate("");
    str96HeadRemainder = Translate("");
    dialogHandle_11.SetInputSize(2);
    dialogHandle_11.SetInputField(0, Translate("Please Open the file"), hslString, "C:\\Users\\Hamilton\\Desktop\\Formulation.xls");
    dialogHandle_11.SetInputField(1, Translate("How many LNP columns are being made?"), hslInteger, 3, 1, 12);
    dialogHandle_11.ShowInput(Translate("start position"), hslInfinite, hslOKOnly | hslDefButton1);
    strFile = dialogHandle_11.GetInputField(0);
    intColumnsTotal = dialogHandle_11.GetInputField(1);
    file1.AddField("Lipid 1", file1_Lipid_1, hslFloat);
    file1.AddField("Lipid 2", file1_Lipid_2, hslFloat);
    file1.AddField("Lipid 3", file1_Lipid_3, hslFloat);
    file1.AddField("Lipid 4", file1_Lipid_4, hslFloat);
    file1.AddField("Lipid 5", file1_Lipid_5, hslFloat);
    file1.AddField("Lipid 6", file1_Lipid_6, hslFloat);
    file1.AddField("Ethanol", file1_Ethanol, hslFloat);
    if( 0 == file1.Open(strFile + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strFile, "HxMetEdCompCmd");
    }
    arDestinationSeq.SetSize(0);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination1);
    arDestinationSeq.AddAsLast(ML_STAR.seqDestination2);
    arRNASeq.SetSize(0);
    arRNASeq.AddAsLast(ML_STAR.seqRNA1);
    arRNASeq.AddAsLast(ML_STAR.seqRNA2);
    arRNASeq.AddAsLast(ML_STAR.seqRNA3);
    arRNASeq.AddAsLast(ML_STAR.seqRNA4);
    arRNASeq.AddAsLast(ML_STAR.seqRNA5);
    arRNASeq.AddAsLast(ML_STAR.seqRNA6);
    arRNASeq.AddAsLast(ML_STAR.seqRNA7);
    arRNASeq.AddAsLast(ML_STAR.seqRNA8);
    arRNASeq.AddAsLast(ML_STAR.seqRNA9);
    arRNASeq.AddAsLast(ML_STAR.seqRNA10);
    arRNASeq.AddAsLast(ML_STAR.seqRNA11);
    arRNASeq.AddAsLast(ML_STAR.seqRNA12);
    arLipidseq.SetSize(0);
    arLipidseq.AddAsLast(ML_STAR.seqLipid1);
    arLipidseq.AddAsLast(ML_STAR.seqLipid2);
    arLipidseq.AddAsLast(ML_STAR.seqLipid3);
    arLipidseq.AddAsLast(ML_STAR.seqLipid4);
    arLipidseq.AddAsLast(ML_STAR.seqLipid5);
    arLipidseq.AddAsLast(ML_STAR.seqLipid6);
    arTipRemainderSeq.SetSize(0);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder1);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder2);
    arTipRemainderSeq.AddAsLast(ML_STAR.seq1000TipsRemainder3);
    intEndSeq = intColumnsTotal * 8;
    floPlateNumber = intEndSeq / (96 * 1.0);
    intPlateNumber = MthCeiling(floPlateNumber);
    intPlateNumberDown = MthFloor(floPlateNumber);
    floRemainder = floPlateNumber - intPlateNumberDown;
    intRemainderColumn = floRemainder * 12;
    intRemainder = floRemainder * 96;
    intReverseRemainder = 95 - intRemainder;
    ML_STAR.seqDestination.SetCount(intEndSeq);
    {
      for(loopCounter7 = 0; loopCounter7 < 96;)
      {
        loopCounter7 = loopCounter7 + 1;
        if (loopCounter7 <= intRemainder)
        {
          str96HeadRemainder = str96HeadRemainder + Translate("1");
        }
        else
        {
          str96HeadRemainder = str96HeadRemainder + Translate("0");
        }
      }
    }
    MECC::TraceComment(Translate("Tip Moving"));
    {
      for(loopCounter4 = 0; loopCounter4 < 3;)
      {
        loopCounter4 = loopCounter4 + 1;
        {
          for(loopCounter5 = 0; loopCounter5 < intRemainderColumn;)
          {
            loopCounter5 = loopCounter5 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
      }
    }
    ML_STAR.seq1000TipsRemainder1.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder2.SetCurrentPosition(1);
    ML_STAR.seq1000TipsRemainder3.SetCurrentPosition(1);
    if(0){
      dialogHandle_1.SetOutput(str96HeadRemainder);
      dialogHandle_1.ShowOutput(Translate("String Modification"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    MECC::TraceComment(Translate("Aliquot RNA"));
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.seqDestination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqDestination, 1, ML_STAR.seqRNA, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seqDestination.GetCurrentPosition() > 0 && ML_STAR.seqDestination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      ML_STAR.seqDestination.SetMax(ML_STAR.seqDestination.GetTotal());
      ML_STAR.seqRNA.SetMax(ML_STAR.seqRNA.GetTotal());
      ML_STAR.seqDestination.SetCurrentPosition(1);
      ML_STAR.seqRNA.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("Aliquot Citrate"));
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MECC::TraceComment(Translate("Aliquot Lipids"));
    {
      loopCounter8 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter8 = loopCounter8 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arLipidVolume.SetSize(0);
        arLipidVolume.AddAsLast(file1_Lipid_1);
        arLipidVolume.AddAsLast(file1_Lipid_2);
        arLipidVolume.AddAsLast(file1_Lipid_3);
        arLipidVolume.AddAsLast(file1_Lipid_4);
        arLipidVolume.AddAsLast(file1_Lipid_5);
        arLipidVolume.AddAsLast(file1_Lipid_6);
        arLipidVolume.AddAsLast(file1_Ethanol);
        arLipidVolume.AddAsLast(file1_Ethanol);
        {
          for(loopCounter9 = 0; loopCounter9 < 8;)
          {
            loopCounter9 = loopCounter9 + 1;
            arLipidVolume[ loopCounter9 -1] = arLipidVolume.ElementAt( loopCounter9 -1) * 8;
          }
        }
        if(0){
          {
            for(loopCounter6 = 0; loopCounter6 < 6;)
            {
              loopCounter6 = loopCounter6 + 1;
              if (arLipidVolume.ElementAt( loopCounter6 -1) == 0)
              {
                str8Channel = str8Channel + Translate("0");
              }
              else
              {
                str8Channel = str8Channel + Translate("1");
              }
            }
          }
          str8Channel = str8Channel + Translate("01");
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR.seqLipid_Mix.SetCurrentPosition(1);
    ML_STAR.seqDestination.SetCurrentPosition(1);
    MECC::TraceComment(Translate("Formulate Particles"));
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR.seqDestination.SetCurrentPosition(1);
    MECC::TraceComment(Translate("Aliquot TBS"));
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateNumberDown;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    loopCounter3 = loopCounter3 + 1;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  } }
