 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "TwomblyChallengeOneAndTwo.res"
variable NumberOfSamples;
dialog dialogHandle_1;
variable loopCounter6;
variable loopCounter7;
variable loopCounter19;
variable loopCounter21;
variable loopCounter25;
variable loopCounter27;
variable loopCounter29;
variable loopCounter30;
variable Sample_Dilution_Well_Tracker;
global device ML_STAR ("TwomblyChallengeOneAndTwo.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("MLStar1000HIghVolumeTipWithFilter"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("MLStar300StandardVolumeTipWithFilter"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("MLStar10LowVolumeTipWithFilter"), ML_STAR, 999);
    TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, Translate("MLStar50uLWithFilter"), ML_STAR, 999);
    dialogHandle_1.SetInputSize(1);
    dialogHandle_1.SetInputField(0, Translate("NumberOfSamples"), hslInteger, 6, 1, 18);
    dialogHandle_1.ShowInput(Translate("input"), hslInfinite, hslOKCancel | hslDefButton1);
    NumberOfSamples = dialogHandle_1.GetInputField(0);
    ML_STAR.SampleWells.SetCount(NumberOfSamples);
    {
      loopCounter21 = 0;
      while (
         (ML_STAR.SampleWells.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.SampleWells, 1, ML_STAR.rgt_cont_60ml_BC_A00_0001, 1);
        loopCounter21 = loopCounter21 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleWells.GetCurrentPosition() > 0 && ML_STAR.SampleWells.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.SampleWells.SetMax(ML_STAR.SampleWells.GetTotal());
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetMax(ML_STAR.rgt_cont_60ml_BC_A00_0001.GetTotal());
      ML_STAR.SampleWells.SetCurrentPosition(1);
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetCurrentPosition(1);
    }
    Sample_Dilution_Well_Tracker = NumberOfSamples * 3;
    ML_STAR.Sample_Dilutions_Updated.SetCount(Sample_Dilution_Well_Tracker);
    {
      loopCounter6 = 0;
      while (
         (ML_STAR.Sample_Dilutions_Updated.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.rgt_cont_60ml_BC_A00_0001, 1, ML_STAR.Sample_Dilutions_Updated, 1);
        loopCounter6 = loopCounter6 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Sample_Dilutions_Updated.GetCurrentPosition() > 0 && ML_STAR.Sample_Dilutions_Updated.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetMax(ML_STAR.rgt_cont_60ml_BC_A00_0001.GetTotal());
      ML_STAR.Sample_Dilutions_Updated.SetMax(ML_STAR.Sample_Dilutions_Updated.GetTotal());
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetCurrentPosition(1);
      ML_STAR.Sample_Dilutions_Updated.SetCurrentPosition(1);
    }
    ML_STAR.Standards_Dilution.SetCurrentPosition(2);
    {
      loopCounter7 = 0;
      while (
         (ML_STAR.Standards_Dilution.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.Standards_Dilution, 1, ML_STAR.rgt_cont_60ml_BC_A00_0001, 1);
        loopCounter7 = loopCounter7 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Standards_Dilution.GetCurrentPosition() > 0 && ML_STAR.Standards_Dilution.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.Standards_Dilution.SetMax(ML_STAR.Standards_Dilution.GetTotal());
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetMax(ML_STAR.rgt_cont_60ml_BC_A00_0001.GetTotal());
      ML_STAR.Standards_Dilution.SetCurrentPosition(1);
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetCurrentPosition(1);
    }
    {
      loopCounter7 = 0;
      while (
         (ML_STAR.Dilution_Plate_Blanks.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Dilution_Plate_Blanks, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.rgt_cont_60ml_BC_A00_0001, 1);
        loopCounter7 = loopCounter7 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Dilution_Plate_Blanks.GetCurrentPosition() > 0 && ML_STAR.Dilution_Plate_Blanks.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Dilution_Plate_Blanks.SetMax(ML_STAR.Dilution_Plate_Blanks.GetTotal());
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetMax(ML_STAR.rgt_cont_60ml_BC_A00_0001.GetTotal());
      ML_STAR.Dilution_Plate_Blanks.SetCurrentPosition(1);
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetCurrentPosition(1);
    }
    ML_STAR.BSA_LOCATION.SetCurrentPosition(2);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.SampleWells.SetCurrentPosition(1);
    ML_STAR.SampleWells.SetCount(NumberOfSamples);
    {
      loopCounter25 = 0;
      while (
         (ML_STAR.SampleWells.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SMP_CAR_32_EPIL_A00_0001, 1, ML_STAR.SampleWells, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
        loopCounter25 = loopCounter25 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleWells.GetCurrentPosition() > 0 && ML_STAR.SampleWells.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SMP_CAR_32_EPIL_A00_0001.SetMax(ML_STAR.SMP_CAR_32_EPIL_A00_0001.GetTotal());
      ML_STAR.SampleWells.SetMax(ML_STAR.SampleWells.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.SMP_CAR_32_EPIL_A00_0001.SetCurrentPosition(1);
      ML_STAR.SampleWells.SetCurrentPosition(1);
      ML_STAR.MlStar50ulTipWithFilter.SetCurrentPosition(1);
    }
    ML_STAR.Standards_Dilution.SetCurrentPosition(1);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      for(loopCounter30 = 0; loopCounter30 < 9;)
      {
        loopCounter30 = loopCounter30 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR.Standards_Dilution.SetCurrentPosition(1);
    ML_STAR.SampleWells.SetCount(NumberOfSamples);
    ML_STAR.Sample_Dilution_Position_One.SetCount(NumberOfSamples);
    ML_STAR.Sample_Dilution_Position_Two.SetCount(NumberOfSamples);
    ML_STAR.Sample_Dilution_Position_Three.SetCount(NumberOfSamples);
    {
      loopCounter27 = 0;
      while (
         (ML_STAR.SampleWells.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.SampleWells, 1, ML_STAR.Sample_Dilution_Position_One, 1, ML_STAR.Sample_Dilution_Position_Three, 1, ML_STAR.Sample_Dilution_Position_Two, 1);
        loopCounter27 = loopCounter27 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleWells.GetCurrentPosition() > 0 && ML_STAR.SampleWells.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.SampleWells.SetMax(ML_STAR.SampleWells.GetTotal());
      ML_STAR.Sample_Dilution_Position_One.SetMax(ML_STAR.Sample_Dilution_Position_One.GetTotal());
      ML_STAR.Sample_Dilution_Position_Three.SetMax(ML_STAR.Sample_Dilution_Position_Three.GetTotal());
      ML_STAR.Sample_Dilution_Position_Two.SetMax(ML_STAR.Sample_Dilution_Position_Two.GetTotal());
      ML_STAR.SampleWells.SetCurrentPosition(1);
      ML_STAR.Sample_Dilution_Position_One.SetCurrentPosition(1);
      ML_STAR.Sample_Dilution_Position_Three.SetCurrentPosition(1);
      ML_STAR.Sample_Dilution_Position_Two.SetCurrentPosition(1);
    }
    ML_STAR.SampleWells.SetCount(NumberOfSamples);
    ML_STAR.Sample_Dilution_Position_One.SetCount(NumberOfSamples);
    ML_STAR.Sample_Dilution_Position_Two.SetCount(NumberOfSamples);
    ML_STAR.Sample_Dilution_Position_Three.SetCount(NumberOfSamples);
    {
      loopCounter19 = 0;
      while (
         (ML_STAR.SampleWells.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.PCR_Plate_First_Position, 1, ML_STAR.SampleWells, 1, ML_STAR.Sample_Well_Predispense, 1);
        loopCounter19 = loopCounter19 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleWells.GetCurrentPosition() > 0 && ML_STAR.SampleWells.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.PCR_Plate_First_Position.SetMax(ML_STAR.PCR_Plate_First_Position.GetTotal());
      ML_STAR.SampleWells.SetMax(ML_STAR.SampleWells.GetTotal());
      ML_STAR.Sample_Well_Predispense.SetMax(ML_STAR.Sample_Well_Predispense.GetTotal());
      ML_STAR.PCR_Plate_First_Position.SetCurrentPosition(1);
      ML_STAR.SampleWells.SetCurrentPosition(1);
      ML_STAR.Sample_Well_Predispense.SetCurrentPosition(1);
    }
    {
      loopCounter19 = 0;
      while (
         (ML_STAR.Sample_Dilution_Position_One.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.PCR_Plate_Second_Position, 1, ML_STAR.Sample_Dilution_Position_One, 1, ML_STAR.Dilution_Position_One_Predispense, 1);
        loopCounter19 = loopCounter19 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Sample_Dilution_Position_One.GetCurrentPosition() > 0 && ML_STAR.Sample_Dilution_Position_One.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.PCR_Plate_Second_Position.SetMax(ML_STAR.PCR_Plate_Second_Position.GetTotal());
      ML_STAR.Sample_Dilution_Position_One.SetMax(ML_STAR.Sample_Dilution_Position_One.GetTotal());
      ML_STAR.Dilution_Position_One_Predispense.SetMax(ML_STAR.Dilution_Position_One_Predispense.GetTotal());
      ML_STAR.PCR_Plate_Second_Position.SetCurrentPosition(1);
      ML_STAR.Sample_Dilution_Position_One.SetCurrentPosition(1);
      ML_STAR.Dilution_Position_One_Predispense.SetCurrentPosition(1);
    }
    {
      loopCounter19 = 0;
      while (
         (ML_STAR.Sample_Dilution_Position_Two.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Dilution_Position_Two_Predispense, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.PCR_Plate_Third_Position, 1, ML_STAR.Sample_Dilution_Position_Two, 1);
        loopCounter19 = loopCounter19 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Sample_Dilution_Position_Two.GetCurrentPosition() > 0 && ML_STAR.Sample_Dilution_Position_Two.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Dilution_Position_Two_Predispense.SetMax(ML_STAR.Dilution_Position_Two_Predispense.GetTotal());
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.PCR_Plate_Third_Position.SetMax(ML_STAR.PCR_Plate_Third_Position.GetTotal());
      ML_STAR.Sample_Dilution_Position_Two.SetMax(ML_STAR.Sample_Dilution_Position_Two.GetTotal());
      ML_STAR.Dilution_Position_Two_Predispense.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_Third_Position.SetCurrentPosition(1);
      ML_STAR.Sample_Dilution_Position_Two.SetCurrentPosition(1);
    }
    {
      loopCounter19 = 0;
      while (
         (ML_STAR.Sample_Dilution_Position_Three.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.PCR_Plate_Fourth_Position, 1, ML_STAR.Sample_Dilution_Position_Three, 1, ML_STAR.Dilution_Position_Three_Predispense, 1);
        loopCounter19 = loopCounter19 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Sample_Dilution_Position_Three.GetCurrentPosition() > 0 && ML_STAR.Sample_Dilution_Position_Three.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
      ML_STAR.PCR_Plate_Fourth_Position.SetMax(ML_STAR.PCR_Plate_Fourth_Position.GetTotal());
      ML_STAR.Sample_Dilution_Position_Three.SetMax(ML_STAR.Sample_Dilution_Position_Three.GetTotal());
      ML_STAR.Dilution_Position_Three_Predispense.SetMax(ML_STAR.Dilution_Position_Three_Predispense.GetTotal());
      ML_STAR.PCR_Plate_Fourth_Position.SetCurrentPosition(1);
      ML_STAR.Sample_Dilution_Position_Three.SetCurrentPosition(1);
      ML_STAR.Dilution_Position_Three_Predispense.SetCurrentPosition(1);
    }
    if (NumberOfSamples <= 6)
    {
      ML_STAR.Blanks_to_PCR_Plate.SetCount(6);
      {
        loopCounter29 = 0;
        while (
           (ML_STAR.Blanks_to_PCR_Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Blanks_to_PCR_Plate, 1, ML_STAR.Blank_Predispense, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1);
          loopCounter29 = loopCounter29 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Blanks_to_PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.Blanks_to_PCR_Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Blanks_to_PCR_Plate.SetMax(ML_STAR.Blanks_to_PCR_Plate.GetTotal());
        ML_STAR.Blank_Predispense.SetMax(ML_STAR.Blank_Predispense.GetTotal());
        ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
        ML_STAR.Blanks_to_PCR_Plate.SetCurrentPosition(1);
        ML_STAR.Blank_Predispense.SetCurrentPosition(1);
        ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetCurrentPosition(1);
      }
      ML_STAR.Standards_to_ALL_PCR_Plates.SetCount(30);
      ML_STAR.Standards_Predispense.SetCount(10);
      {
        loopCounter29 = 0;
        while (
           (ML_STAR.Standards_to_ALL_PCR_Plates.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.Standards_to_ALL_PCR_Plates, 1, ML_STAR.Standards_Predispense, 1);
          loopCounter29 = loopCounter29 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Standards_to_ALL_PCR_Plates.GetCurrentPosition() > 0 && ML_STAR.Standards_to_ALL_PCR_Plates.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
        ML_STAR.Standards_to_ALL_PCR_Plates.SetMax(ML_STAR.Standards_to_ALL_PCR_Plates.GetTotal());
        ML_STAR.Standards_Predispense.SetMax(ML_STAR.Standards_Predispense.GetTotal());
        ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetCurrentPosition(1);
        ML_STAR.Standards_to_ALL_PCR_Plates.SetCurrentPosition(1);
        ML_STAR.Standards_Predispense.SetCurrentPosition(1);
      }
    }
    else
    {
      if (NumberOfSamples > 12)
      {
        {
          loopCounter29 = 0;
          while (
             (ML_STAR.Blanks_to_PCR_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Blanks_to_PCR_Plate, 1, ML_STAR.Blank_Predispense, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1);
            loopCounter29 = loopCounter29 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Blanks_to_PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.Blanks_to_PCR_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Blanks_to_PCR_Plate.SetMax(ML_STAR.Blanks_to_PCR_Plate.GetTotal());
          ML_STAR.Blank_Predispense.SetMax(ML_STAR.Blank_Predispense.GetTotal());
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
          ML_STAR.Blanks_to_PCR_Plate.SetCurrentPosition(1);
          ML_STAR.Blank_Predispense.SetCurrentPosition(1);
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetCurrentPosition(1);
        }
        {
          loopCounter29 = 0;
          while (
             (ML_STAR.Standards_to_ALL_PCR_Plates.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.Standards_Predispense, 1, ML_STAR.Standards_to_ALL_PCR_Plates, 1);
            loopCounter29 = loopCounter29 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Standards_to_ALL_PCR_Plates.GetCurrentPosition() > 0 && ML_STAR.Standards_to_ALL_PCR_Plates.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
          ML_STAR.Standards_Predispense.SetMax(ML_STAR.Standards_Predispense.GetTotal());
          ML_STAR.Standards_to_ALL_PCR_Plates.SetMax(ML_STAR.Standards_to_ALL_PCR_Plates.GetTotal());
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetCurrentPosition(1);
          ML_STAR.Standards_Predispense.SetCurrentPosition(1);
          ML_STAR.Standards_to_ALL_PCR_Plates.SetCurrentPosition(1);
        }
      }
      else
      {
        ML_STAR.Blanks_to_PCR_Plate.SetCount(12);
        {
          loopCounter29 = 0;
          while (
             (ML_STAR.Blanks_to_PCR_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Blanks_to_PCR_Plate, 1, ML_STAR.Blank_Predispense, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1);
            loopCounter29 = loopCounter29 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Blanks_to_PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.Blanks_to_PCR_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Blanks_to_PCR_Plate.SetMax(ML_STAR.Blanks_to_PCR_Plate.GetTotal());
          ML_STAR.Blank_Predispense.SetMax(ML_STAR.Blank_Predispense.GetTotal());
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
          ML_STAR.Blanks_to_PCR_Plate.SetCurrentPosition(1);
          ML_STAR.Blank_Predispense.SetCurrentPosition(1);
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetCurrentPosition(1);
        }
        ML_STAR.Standards_to_ALL_PCR_Plates.SetCount(60);
        ML_STAR.Standards_Predispense.SetCount(20);
        {
          loopCounter29 = 0;
          while (
             (ML_STAR.Standards_to_ALL_PCR_Plates.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.Standards_Predispense, 1, ML_STAR.Standards_to_ALL_PCR_Plates, 1);
            loopCounter29 = loopCounter29 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Standards_to_ALL_PCR_Plates.GetCurrentPosition() > 0 && ML_STAR.Standards_to_ALL_PCR_Plates.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
          ML_STAR.Standards_Predispense.SetMax(ML_STAR.Standards_Predispense.GetTotal());
          ML_STAR.Standards_to_ALL_PCR_Plates.SetMax(ML_STAR.Standards_to_ALL_PCR_Plates.GetTotal());
          ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetCurrentPosition(1);
          ML_STAR.Standards_Predispense.SetCurrentPosition(1);
          ML_STAR.Standards_to_ALL_PCR_Plates.SetCurrentPosition(1);
        }
      }
    }
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("MLStar1000HighVolumeTipWithFilter"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("MLStar300StandardVolumeTipWithFilter"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar10ulLowVolumeTipWithFilter, Translate("MLStar10LowVolumeTipWithFilter"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, Translate("MLStar50uLWithFilter"), ML_STAR);
  } }
